monkeyml version=1.0
io_devices "IO Devices"
  iodevice eyelink "Eyelink": data_interval=1ms, eye_rx=EYE_rightX_raw, eye_ry=EYE_rightY_raw, eye_lx=EYE_leftX_raw, eye_ly=EYE_leftY_raw, eye_x=EYE_x_raw, eye_y=EYE_y_raw, eye_z=EYE_z_raw, href_rx=EYE_rightX_href, href_ry=EYE_rightY_href, href_lx=EYE_leftX_href, href_ly=EYE_leftY_href, pupil_rx=EYE_rightPupilX_raw, pupil_ry=EYE_rightPupilY_raw, pupil_lx=EYE_leftPupilX_raw, pupil_ly=EYE_leftPupilY_raw, pupil_size_r=EYE_rightPupilSize_raw, pupil_size_l=EYE_leftPupilSize_raw, eye_time=EYE_sampleTime_ms, tracking_dist=1024, tracker_ip=100.1.1.1
  calibrator standard_eye_calibrator "EyeCalibrator": eyeh_raw=EYE_x_raw, eyev_raw=EYE_y_raw, eyeh_calibrated=EYE_x_dva, eyev_calibrated=EYE_y_dva
  filter basic_eye_monitor "EyeMonitor": eyeh_calibrated=EYE_x_dva, eyev_calibrated=EYE_y_dva, eye_state=EYE_saccade, width_samples=5, saccade_entry_speed=50, saccade_exit_speed=20
  iodevice stimulus_display "Stimulus Display": background_color=0.5, 0.5, 0.5, announce_stimuli_on_implicit_updates=YES
  iodevice mIO "mIO": data_interval=1ms, joystick_direction=IO_joystickDirection, joystick_strength=IO_joystickStrength, joystick_x_raw=IO_joystickX_raw, joystick_y_raw=IO_joystickY_raw, joystick_x_calib=IO_joystickX_calib, joystick_y_calib=IO_joystickY_calib
variables "Variables"
  folder "MatLab"
    variable integer "ML_trialEnd": default_value=0
    variable integer "ML_trialStart": default_value=0
    variable boolean "ML_sync": default_value=0
    variable any "TRIAL_outcome": default_value=0
  folder "Feedback"
    variable any "start_r": default_value=0.7
    variable any "start_g": default_value=0.7
    variable any "start_b": default_value=0.7
    variable any "FB_scoreTimer": default_value=0
    variable any "FB_scoreText": default_value=0
    variable any "FB_ruler_size_x": default_value=1
    variable any "FB_ruler_size_y": default_value=20
    variable any "FB_ruler_x": default_value=-14.5
    variable any "FB_ruler_y": default_value=0
    variable any "FB_counter_x": default_value=-14.5
    variable any "FB_counter_all_x": default_value=-14.5
    variable any "FB_counter_y": default_value=0
    variable any "FB_counter_all_y": default_value=0
    variable any "FB_counter_size_y": default_value=0
    variable any "FB_counter_size_x": default_value=1
    variable any "FB_counter_all_size_y": default_value=0
    variable any "FB_counter_all_size_x": default_value=1
    variable any "FB_textFontSize": default_value=30
    variable any "FB_textXSize": default_value=5
    variable any "FB_textYSize": default_value=2
    variable any "FB_pos_x": default_value=-14.5
    variable any "FB_pos_y": default_value=0
  folder "RDP"
    variable any "RDP_direction": default_value=0
    variable any "RDP_radius": default_value=8
    variable any "RDP_controlled_x": default_value=0
    variable any "RDP_target_x": default_value=0
    variable any "RDP_y": default_value=0
    variable any "RDP_x": default_value=0
    variable any "RDP_density": default_value=3
    variable any "RDP_dotsize": default_value=0.2
    variable any "RDP_speed": default_value=3
    variable any "RDP_coherence": default_value=0.3
    variable any "RDP_lifetime": default_value=0.3
    variable any "RDP_r": default_value=0.75
    variable any "RDP_g": default_value=0.75
    variable any "RDP_b": default_value=0.75
  folder "EXP"
    variable any "EXP_total_events": default_value=96
    variable any "EXP_stepsize": default_value=0
    variable any "EXP_showTarget": default_value=0
    variable any "EXP_shiftFrames": default_value=0
    variable any "EXP_shiftType": default_value=0
    variable any "EXP_debug": default_value=0
    variable any "EXP_expShift": default_value=0
    variable any "EXP_stepShift": default_value=0
    variable any "EXP_theta_c": default_value=0
    variable any "EXP_refreshRate": default_value=1000 / refresh_rate()
    variable any "EXP_alwaysTargets": default_value=4
    variable any "EXP_minSwitch": default_value=500
    variable any "EXP_maxSwitch": default_value=500
    variable any "EXP_minalpha": default_value=15
    variable any "EXP_maxalpha": default_value=45
    variable any "EXP_framerate": default_value=60
    variable any "EXP_score": default_value=0
    variable any "EXP_target_collision_area": default_value=2
    variable any "EXP_snr_min": default_value=0.3
    variable any "EXP_snr_max": default_value=EXP_snr_min + (EXP_snr_min * (1/3))
    variable string "EXP_experiment": default_value=null, persistant=0
    variable boolean "EXP_no_target_flag": default_value=0, persistant=0
    variable any "EXP_minimum_strength": default_value=0.3
    variable integer "EXP_starting_state": default_value=0
    variable any "EXP_response_window": default_value=700
    variable float "EXP_user_reward_time": default_value=500, persistant=1
    variable float "EXP_RDP_coherence": default_value=0.5
    variable float "EXP_stimulus_position_y": default_value=0
    variable any "EXP_direction": default_value=0
    variable any "EXP_CycleDuration": default_value=3500
    variable any "EXP_SwitchDuration": default_value=3000
    variable any "EXP_SteadyStateDuration": default_value=500
    variable any "EXP_TargetDuration": default_value=EXP_response_window
    variable any "EXP_IEIDuration": default_value=16
    variable float "EXP_reward_in_ml": default_value=0
    variable any "EXP_range": default_value=30
    variable float "EXP_dropsize": default_value=0.25, persistant=1
    variable any "EXP_lower_limit": default_value=0
    variable any "EXP_upper_limit": default_value=0
    variable integer "EXP_last_step": default_value=1, persistant=1
    variable float "EXP_version": default_value=1.2
    variable string "EXP_task": default_value=null
    variable any "EXP_ITI": default_value=200
    variable any "EXP_tolerance": default_value=45
    variable any "EXP_walk_range": default_value=2
    variable any "EXP_fadeOutRate": default_value=0.06
    variable any "EXP_PreSNR_TargetDuration": default_value=1000
    variable any "EXP_PreSNR_ResponseWindow": default_value=3000
    variable any "EXP_PreRT_ResponseWindow": default_value=1000
  folder "IO"
    variable any "IO_area_flag": default_value=0
    variable any "IO_RDP_flag": default_value=0
    variable any "IO_target_alpha": default_value=1
    variable float "IO_rewardA": default_value=0
      action assignment "Assign Variable": variable=INFO_rewardGiven_ml, value=INFO_rewardGiven_ml + IO_rewardA
    variable float "IO_rewardB": default_value=0
      action assignment "Assign Variable 2": variable=INFO_rewardGiven_ml, value=INFO_rewardGiven_ml + IO_rewardB
    variable any "IO_RDP_controlled": default_value=0
    variable any "IO_target_phase": default_value=0
    variable any "IO_start_area_x": default_value=0
    variable any "IO_start_area_y": default_value=0
    variable any "IO_start_area_flag": default_value=0
    variable any "IO_cursor_x": default_value=0
    variable any "IO_cursor_y": default_value=0
    variable any "IO_mouse_x": default_value=0
    variable any "IO_mouse_y": default_value=0
    variable any "IO_mouse_down": default_value=0
    variable float "IO_joystickDirection": default_value=0
    variable any "IO_joystickStrength": default_value=0
    variable integer "IO_joystickX_raw": default_value=0
    variable integer "IO_joystickY_raw": default_value=0
    variable float "IO_joystickX_calib": default_value=0
    variable float "IO_joystickY_calib": default_value=0
  folder "Eyeposition_(EYE)"
    variable float "EYE_x_dva": default_value=0
    variable float "EYE_y_dva": default_value=0
    variable float "EYE_z_dva": default_value=0
    variable float "EYE_rightX_raw": default_value=0
    variable float "EYE_rightY_raw": default_value=0
    variable float "EYE_leftX_raw": default_value=0
    variable float "EYE_leftY_raw": default_value=0
    variable float "EYE_x_raw": default_value=0
    variable float "EYE_y_raw": default_value=0
    variable float "EYE_z_raw": default_value=0
    variable float "EYE_rightX_href": default_value=0
    variable float "EYE_rightY_href": default_value=0
    variable float "EYE_leftX_href": default_value=0
    variable float "EYE_leftY_href": default_value=0
    variable float "EYE_rightPupilX_raw": default_value=0
    variable float "EYE_rightPupilY_raw": default_value=0
    variable float "EYE_leftPupilX_raw": default_value=0
    variable float "EYE_leftPupilY_raw": default_value=0
    variable float "EYE_rightPupilSize_raw": default_value=0
    variable float "EYE_leftPupilSize_raw": default_value=0
    variable integer "EYE_sampleTime_ms": default_value=0
    variable boolean "EYE_saccade": default_value=0
    variable any "local_posX": scope=local, default_value=0
    variable any "local_posY": scope=local, default_value=0
  folder "Target"
    variable any "IO_target_trigger_size": default_value=5
    variable list "target_position_x": default_value=0,9,0,-9,0,5,0,-5,0,12,0,-12
    variable list "target_position_y": default_value=9,0,-9,0,5,0,-5,0,12,0,-12,0
    variable any "IO_target_size": default_value=2
    variable any "IO_target_flag": default_value=0
    variable any "IO_target_flag1": default_value=0
    variable any "IO_target_flag2": default_value=0
    variable any "IO_target_flag3": default_value=0
    variable any "IO_target_flag4": default_value=0
    variable any "IO_target_ON": default_value=0
    variable any "IO_target_shown": default_value=0
    variable any "target_r": default_value=0
    variable any "target_g": default_value=1
    variable any "target_b": default_value=0
    variable any "trigger_x": default_value=0.5
    variable any "target_x": default_value=0.5
    variable any "target_x1": default_value=0.5
    variable any "target_x2": default_value=0.5
    variable any "target_x3": default_value=0.5
    variable any "target_x4": default_value=0.5
    variable any "trigger_y": default_value=0.5
    variable any "target_y": default_value=0.5
    variable any "target_y2": default_value=0.5
    variable any "target_y3": default_value=0.5
    variable any "target_y4": default_value=0.5
    variable any "target_y1": default_value=0.5
  folder "INFO"
    variable any "alpha": default_value=0
    variable float "degree": default_value=0
    variable float "diff": default_value=0
    variable any "five_targets": default_value=0
    variable integer "success": default_value=0
    variable integer "missed": default_value=0
    variable integer "failure": default_value=0
    variable integer "ignore": default_value=0
    variable boolean "PAUSE": default_value=0
    variable any "INFO_rewardGiven_ml": default_value=0
    variable integer "INFO_trials": default_value=0
  folder "Staircase"
    variable any "SC_steps": default_value="1 0.95 0.903 0.858 0.815 0.774 0.735 0.698 0.663 0.63 0.599 0.569 0.541 0.514 0.488 0.464 0.441 0.419 0.398 0.378 0.359 0.341 0.324 0.308 0.293 0.278 0.264 0.251 0.238 0.226 0.215 0.204 0.194 0.184 0.175 0.166 0.158 0.15 0.143 0.136 0.129 0.123 0.117 0.111 0.105 0.1 0.095 0.09"
    variable boolean "SC_in": default_value=0, persistant=0
    variable boolean "SC_in_tS": default_value=0, persistant=0
    variable float "SC_out": default_value=0, persistant=0
    variable float "SC_out_tS": default_value=0, persistant=0
    variable integer "SC_left_step": default_value=1, persistant=1
    variable integer "SC_left_step_tS": default_value=1, persistant=1
    variable integer "SC_left_rate": default_value=4, persistant=1
    variable integer "SC_left_rate_tS": default_value=1, persistant=1
    variable integer "SC_right_step": default_value=3, persistant=1
    variable integer "SC_right_step_tS": default_value=1, persistant=1
    variable integer "SC_right_rate": default_value=1, persistant=1
    variable integer "SC_right_rate_tS": default_value=1, persistant=1
    variable integer "SC_index_starting": default_value=1, persistant=1
    variable integer "SC_index_starting_tS": default_value=1, persistant=1
  folder "Selections"
    variable selection "SEL_switchType": values=1,2, selection=random_without_replacement, nsamples=1, sampling_method=samples, advance_on_accept=YES, autoreset=YES
    variable selection "SEL_stepsize": values=0.5,1,1.5,2, selection=random_without_replacement, nsamples=1, sampling_method=samples, advance_on_accept=YES, autoreset=YES
    variable selection "SEL_switchFrames": values=25,28,31,34,37,40,43,46, selection=random_without_replacement, nsamples=1, sampling_method=samples, advance_on_accept=YES, autoreset=YES
    variable selection "SEL_snr": values=0.5, 0.40, 0.30, 0.20, 0.18, 0.16, 0.14, 0.12, 0.10, 0.08, selection=random_with_replacement, nsamples=10000, sampling_method=samples, advance_on_accept=YES, autoreset=YES
    variable selection "SEL_direction": values=0, 90, 180, 270, selection=random_without_replacement, nsamples=10, sampling_method=cycles, advance_on_accept=YES, autoreset=NO
    variable any "LOC_stepsize": scope=local, default_value=0
    variable any "LOC_type": scope=local, default_value=0
    variable any "LOC_rate": scope=local, default_value=0
    variable any "LOC_target": scope=local, default_value=0
    variable any "LOC_frames": scope=local, default_value=0
    variable any "LOC_alpha": scope=local, default_value=0
  folder "dummies"
    variable any "IDX": default_value=0
    variable any "coin": default_value=0
    variable any "dice": default_value=0
    variable any "stepsize": default_value=0
    variable any "f_alpha": default_value=0
    variable any "o_alpha": default_value=0
    variable any "n_alpha": default_value=0
    variable any "aborted": default_value=0
    variable any "angle_x": default_value=1
    variable any "angle_y": default_value=1
    variable any "pi": default_value=3.14
    variable any "dummy_trigger": default_value=0
    variable any "dummy_trigger_x": default_value=1
    variable any "dummy_trigger_y": default_value=1
    variable any "dummy_trigger_z": default_value=0
  folder "Calibration"
    variable integer "fixationPoint_color_r": default_value=1
    variable integer "fixationPoint_color_g": default_value=1
    variable integer "fixationPoint_color_b": default_value=1
    variable any "IO_fixationPoint": default_value=1
    variable any "IO_fixationPoint_2": default_value=0
    variable any "CTRL_fixationWidth_dva": default_value=0
    variable any "fixationPoint_posX": default_value=0
    variable any "fixationPoint_posY": default_value=0
sounds "Sounds"
  sound wav_file "sound_coin": path=./Sounds/Coin.wav, amplitude=0.8
  sound wav_file "sound_jump": path=./Sounds/Jump.wav, amplitude=0.8
stimuli "Stimuli"
  stimulus blank_screen "background": color=0.5,0.5,0.5
  stimulus fixation_point "fixationPoint": color=fixationPoint_color_r,fixationPoint_color_g,fixationPoint_color_b, trigger_width=CTRL_fixationWidth_dva, trigger_watch_x=EYE_x_dva, trigger_watch_y=EYE_y_dva, trigger_flag=IO_fixationPoint_2, x_size=0.5, y_size=0.5, x_position=fixationPoint_posX, y_position=fixationPoint_posY, rotation=0, alpha_multiplier=1
  stimulus text "endText": text="Done", font_name=Helvetica Neue, font_size=FB_textFontSize, text_alignment=center, color=0,0,1, x_size=FB_textXSize, y_size=FB_textYSize, x_position=0, y_position=10, rotation=0, alpha_multiplier=1
  stimulus rectangle "ruler": color=1,1,1, x_size=FB_ruler_size_x, y_size=FB_ruler_size_y, x_position=FB_ruler_x, y_position=FB_ruler_y, rotation=0, alpha_multiplier=0.5
  stimulus rectangle "counter": color=0,1,0, x_size=FB_counter_size_x, y_size=FB_counter_size_y, x_position=FB_counter_x, y_position=FB_counter_y, rotation=0, alpha_multiplier=0.5
  stimulus rectangle "counter_all": color=1,0.6,0, x_size=FB_counter_all_size_x, y_size=FB_counter_all_size_y, x_position=FB_counter_all_x, y_position=FB_counter_all_y, rotation=0, alpha_multiplier=0.5
  stimulus rectangle "midline": color=1,1,1, x_size=0.2, y_size=16, x_position=0, y_position=0, rotation=-RDP_direction, alpha_multiplier=0.5
  stimulus circular_fixation_point "cursor": color=1,1,1, trigger_width=dummy_trigger, trigger_watch_x=dummy_trigger_x, trigger_watch_y=dummy_trigger_y, trigger_flag=dummy_trigger_z, x_size=1, y_size=1, x_position=IO_joystickX_calib * 15.2024, y_position=IO_joystickY_calib * -11.4018, rotation=0, alpha_multiplier=1
  stimulus r_d_p "RDP": radius=RDP_radius, x_position=RDP_x, y_position=RDP_y, dot_density=RDP_density, dot_size=RDP_dotsize, color=RDP_r,RDP_g,RDP_b, alpha_multiplier=1.0, direction=RDP_direction, speed=RDP_speed, coherence=RDP_coherence, lifetime=RDP_lifetime, announce_dots=NO, autoplay=YES
  stimulus circular_fixation_point "RDP_trigger": color=0.5,0.5,0.5, trigger_width=RDP_radius*2, trigger_watch_x=IO_cursor_x, trigger_watch_y=IO_cursor_y, trigger_flag=IO_RDP_flag, x_size=RDP_radius*2, y_size=RDP_radius*2, x_position=RDP_x, y_position=RDP_y, rotation=0, alpha_multiplier=1
  stimulus circular_fixation_point "target": color=1,0,0, trigger_width=IO_target_size + EXP_target_collision_area, trigger_watch_x=IO_cursor_x, trigger_watch_y=IO_cursor_y, trigger_flag=IO_target_flag, x_size=IO_target_size, y_size=IO_target_size, x_position=target_x, y_position=target_y, rotation=0, alpha_multiplier=0
  stimulus circular_fixation_point "target1": color=1,0,0, trigger_width=IO_target_size + EXP_target_collision_area, trigger_watch_x=IO_cursor_x, trigger_watch_y=IO_cursor_y, trigger_flag=IO_target_flag1, x_size=IO_target_size, y_size=IO_target_size, x_position=target_x1, y_position=target_y1, rotation=0, alpha_multiplier=0
  stimulus circular_fixation_point "target2": color=1,0,0, trigger_width=IO_target_size + EXP_target_collision_area, trigger_watch_x=IO_cursor_x, trigger_watch_y=IO_cursor_y, trigger_flag=IO_target_flag2, x_size=IO_target_size, y_size=IO_target_size, x_position=target_x2, y_position=target_y2, rotation=0, alpha_multiplier=0
  stimulus circular_fixation_point "target3": color=1,0,0, trigger_width=IO_target_size + EXP_target_collision_area, trigger_watch_x=IO_cursor_x, trigger_watch_y=IO_cursor_y, trigger_flag=IO_target_flag3, x_size=IO_target_size, y_size=IO_target_size, x_position=target_x3, y_position=target_y3, rotation=0, alpha_multiplier=0
  stimulus circular_fixation_point "target4": color=1,0,0, trigger_width=IO_target_size + EXP_target_collision_area, trigger_watch_x=IO_cursor_x, trigger_watch_y=IO_cursor_y, trigger_flag=IO_target_flag4, x_size=IO_target_size, y_size=IO_target_size, x_position=target_x4, y_position=target_y4, rotation=0, alpha_multiplier=0
  stimulus image_file "target_coin": path=./coin.png, x_size=2, y_size=2, x_position=target_x, y_position=target_y, rotation=0, alpha_multiplier=IO_target_alpha, deferred=NO
  stimulus image_file "target_coin1": path=./coin.png, x_size=2, y_size=2, x_position=target_x1, y_position=target_y1, rotation=0, alpha_multiplier=IO_target_alpha, deferred=NO
  stimulus image_file "target_coin2": path=./coin.png, x_size=2, y_size=2, x_position=target_x2, y_position=target_y2, rotation=0, alpha_multiplier=IO_target_alpha, deferred=NO
  stimulus image_file "target_coin3": path=./coin.png, x_size=2, y_size=2, x_position=target_x3, y_position=target_y3, rotation=0, alpha_multiplier=IO_target_alpha, deferred=NO
  stimulus image_file "target_coin4": path=./coin.png, x_size=2, y_size=2, x_position=target_x4, y_position=target_y4, rotation=0, alpha_multiplier=IO_target_alpha, deferred=NO
  stimulus circular_fixation_point "area": color=0,1,0, trigger_width=RDP_radius*4, trigger_watch_x=IO_cursor_x, trigger_watch_y=IO_cursor_y, trigger_flag=IO_area_flag, x_size=RDP_radius*4, y_size=RDP_radius*4, x_position=0, y_position=0, rotation=0, alpha_multiplier=0
  stimulus circular_fixation_point "start_area": color=start_r,start_g,start_b, trigger_width=3, trigger_watch_x=IO_cursor_x, trigger_watch_y=IO_cursor_y, trigger_flag=IO_start_area_flag, x_size=3, y_size=3, x_position=IO_start_area_x, y_position=IO_start_area_y, rotation=0, alpha_multiplier=0.5
filters "Filters"
optimizers "Optimizers"
  filter Staircase_Optimizer "SC_noise": input=SC_in, output=SC_out, steps_csv=SC_steps, index=SC_index_starting, leftCriterion=SC_left_rate, version=EXP_version, rightCriterion=SC_right_rate
experiment "AutoTraining"
  protocol "Calibration-9p": nsamples=1, sampling_method=cycles, selection=sequential
    action start_device_IO "start( Eyelink )": device=Eyelink
    block "Calibration Block": nsamples=1, sampling_method=cycles, selection=sequential
      trial "Calibration Trial": nsamples=1, sampling_method=cycles, selection=sequential
        action clear_calibration "Clear Calibration": calibrator=EyeCalibrator
        action queue_stimulus "queue( background )": stimulus=background
        trial "Calibration List": nsamples=1, sampling_method=cycles, selection=random_without_replacement
          range_replicator "Califixpoint position x": from=-10, to=10, step=5, variable=local_posX
            range_replicator "Califixpoint position y": from=-10, to=10, step=5, variable=local_posY
              task_system "Calibration System"
                task_system_state "BEGIN_STATE_SYSTEM"
                  action assignment "fixationPoint_posX = local_posX": variable=fixationPoint_posX, value=local_posX
                  action assignment "fixationPoint_posY = local_posY": variable=fixationPoint_posY, value=local_posY
                  action report "log( "Calibration Trial; Fixation point at x= " )": message=Calibration Trial; Fixation point at x= $fixationPoint_posX , y= $fixationPoint_posY , fixation width = $CTRL_fixationWidth_dva
                  action queue_stimulus "queue( fixationPoint )": stimulus=fixationPoint
                  transition direct "always goto SHOW_CALIBRATION_POINT": target=SHOW_CALIBRATION_POINT
                task_system_state "SHOW_CALIBRATION_POINT"
                  action report "log( "Calibration Trial; Fixation point at x= " )": message=Calibration Trial; Fixation point at x= $fixationPoint_posX , y= $fixationPoint_posY , fixation width = $CTRL_fixationWidth_dva
                  action update_stimulus_display "update stimulus display"
                  transition conditional "if( IO_fixationPoint ) goto PRE_AQUIRE": condition=IO_fixationPoint, target=PRE_AQUIRE
                task_system_state "PRE_AQUIRE"
                  action report "log( "Pre Fixation Time ..." )": message=Pre Fixation Time ...
                  action start_timer "start( PreAquireTimer = (250)ms @base )": timer=PreAquireTimer, duration=250, duration_units=ms
                  transition conditional "if( IO_fixationPoint == 0 ) goto SHOW_CALIBRATION_POINT": condition=IO_fixationPoint == 0, target=SHOW_CALIBRATION_POINT
                  transition timer_expired "if( PreAquireTimer ) goto CALIBRATION_AQUIRE": target=CALIBRATION_AQUIRE, timer=PreAquireTimer
                task_system_state "CALIBRATION_AQUIRE"
                  action start_timer "start( fixation_timer = (1000)ms @base )": timer=fixation_timer, duration=1000, duration_units=ms
                  action begin_calibration_average "Begin Averaged Calibration Sample": calibrator=EyeCalibrator
                  action report "log( "====== GETTING SAMPLES ======" )": message======= GETTING SAMPLES ======
                  transition conditional "if( NOT( IO_fixationPoint ) ) goto FIXATION_BREAK": condition=NOT( IO_fixationPoint ), target=FIXATION_BREAK
                  transition timer_expired "if( fixation_timer ) goto ACCEPT_SAMPLES": target=ACCEPT_SAMPLES, timer=fixation_timer
                task_system_state "ACCEPT_SAMPLES"
                  action end_calibration_average_and_take_sample "End Averaged Calibration Sample": calibrator=EyeCalibrator, calibratable_object=fixationPoint
                  action dequeue_stimulus "dequeue( fixationPoint )": stimulus=fixationPoint
                  action update_stimulus_display "update stimulus display"
                  action accept_selections "Accept Trial": selection=Calibration List
                  action report "log( "Fixation Maintained -- Trial Accepted !!" )": message=Fixation Maintained -- Trial Accepted !!!
                  transition direct "always goto EXIT_STATE_SYSTEM": target=EXIT_STATE_SYSTEM
                task_system_state "FIXATION_BREAK"
                  action end_calibration_average_and_ignore "End Averaged Calibration Sample": calibrator=EyeCalibrator
                  action dequeue_stimulus "dequeue( fixationPoint )": stimulus=fixationPoint
                  action update_stimulus_display "update stimulus display"
                  action reject_selections "Reject Trial": selection=Calibration List
                  action report "log( "Fixation Lost -- Trial Rejected." )": message=Fixation Lost -- Trial Rejected.
                  transition direct "always goto EXIT_STATE_SYSTEM": target=EXIT_STATE_SYSTEM
                task_system_state "EXIT_STATE_SYSTEM"
                  action wait "wait( 1000ms )": duration=1000, duration_units=ms
                  transition yield "return to parent task system"
        action update_calibration "Update Calibration": calibrator=EyeCalibrator
        action dequeue_stimulus "dequeue( background )": stimulus=background
        action update_stimulus_display "update stimulus display"
    action stop_device_IO "stop( Eyelink )": device=Eyelink
  protocol "Pre-test SNR": nsamples=1, sampling_method=cycles, selection=sequential
    action queue_stimulus "Queue background": stimulus=background
    action queue_stimulus "Queue area": stimulus=area
    action start_device_IO "Start mIO": device=mIO
    action start_device_IO "start( Eyelink ) 2": device=Eyelink
    action live_queue_stimulus "Live Queue cursor": stimulus=cursor
    action update_stimulus_display "Update Display"
    action assignment "Set Staircase Starting point": variable=SC_index_starting, value=1
    action assignment "Set IO_start_area_y": variable=IO_start_area_y, value=0
    action assignment "Set IO_start_area_x": variable=IO_start_area_x, value=0
    trial "Main Task System": nsamples=1, sampling_method=cycles, selection=sequential
      task_system "LOOP"
        task_system_state "Wait for joystick"
          action queue_stimulus "Queue start_area": stimulus=start_area
          action assignment "Update Cursor Position X": variable=IO_cursor_x, value=IO_joystickX_calib * 15.2024
          action assignment "Update Cursor Position Y": variable=IO_cursor_y, value=IO_joystickY_calib * -11.4018
          action update_stimulus_display "Update Display"
          transition conditional "If Cursor inside start area, go to New Trial": condition=IO_start_area_flag, target=New Trial
          transition conditional "If Cursor inside start area, go to Wait For Joystick": condition=IO_start_area_flag == 0, target=Wait for joystick
        task_system_state "New Trial"
          action if "Set Matlab variables": condition=1
            action assignment "set ML sync": variable=ML_sync, value=1
            action assignment "set ML trial start": variable=ML_trialStart, value=ML_trialStart + 1
            action assignment "Log task name": variable=EXP_task, value="pre-test-SNR"
          action live_queue_stimulus "Live Queue RDP": stimulus=RDP
          action assignment "Set RDP direction from 90,180,270,360": variable=RDP_direction, value=disc_rand(0,3)*90
          action assignment "Set RDP Speed to 4": variable=RDP_speed, value=4
          action assignment "Set RDP coherence to SC_out": variable=RDP_coherence, value=SC_out
          action assignment "Set Show Target to 0": variable=EXP_showTarget, value=0
          action update_stimulus_display "Update Display"
          action start_timer "Start Timer (TargetTimer)": timer=TargetTimer, duration=EXP_PreSNR_TargetDuration, duration_units=ms
          action report "Report trial start": message====== TRIAL $ML_trialStart STARTS=====
          transition direct "Go to update stimulus": target=Update Stimulus
        task_system_state "Update Stimulus"
          action start_timer "Start Timer (FrameTimer)": timer=FrameTimer, duration=16, duration_units=ms
          action assignment "Update Cursor Position X": variable=IO_cursor_x, value=IO_joystickX_calib * 15.2024
          action assignment "Update Cursor Position Y": variable=IO_cursor_y, value=IO_joystickY_calib * -11.4018
          transition timer_expired "If FrameTimer Expired, Transition to Update Stimulus": target=Update Stimulus, timer=FrameTimer
          transition conditional "if TargetTimer Expired go to Show Target": condition=timer_expired(TargetTimer), target=Show Target
          transition conditional "if start_area left go to false alarm": condition=IO_start_area_flag == 0, target=False Alarm
        task_system_state "Show Target"
          action report "Report": message=-- Show Targets
          action live_queue_stimulus "Live Queue cursor 2": stimulus=cursor
          action assignment "Set Show Target to 1": variable=EXP_showTarget, value=1
          action dequeue_stimulus "Dequeue start_area": stimulus=start_area
          action dequeue_stimulus "Dequeue RDP": stimulus=RDP
          action if "Queue Targets": condition=1
            action assignment "Set Target_y1 position": variable=target_y1, value=9
            action assignment "Set Target_x1 position": variable=target_x1, value=0
            action assignment "Set Target_x2 position 2": variable=target_x2, value=9
            action assignment "Set Target_y2 position 2": variable=target_y2, value=0
            action assignment "Set Target_x3 position 3": variable=target_x3, value=0
            action assignment "Set Target_y3 position 3": variable=target_y3, value=-9
            action assignment "Set Target_x4 position 4": variable=target_x4, value=-9
            action assignment "Set Target_y4 position 4": variable=target_y4, value=0
            action live_queue_stimulus "Live Queue Target 1": stimulus=target1
            action live_queue_stimulus "Live Queue Target 2": stimulus=target2
            action live_queue_stimulus "Live Queue Target 3": stimulus=target3
            action live_queue_stimulus "Live Queue Target 4": stimulus=target4
            action live_queue_stimulus "Live Queue Target_coin1": stimulus=target_coin1
            action live_queue_stimulus "Live Queue Target_coin 2": stimulus=target_coin2
            action live_queue_stimulus "Live Queue Target_coin 3": stimulus=target_coin3
            action live_queue_stimulus "Live Queue Target_coin 4": stimulus=target_coin4
          action update_stimulus_display "Update Display"
          action start_timer "Start ResponseTimer": timer=ResponseTimer, duration=EXP_PreSNR_ResponseWindow, duration_units=ms
          transition direct "Always Go to ...": target=Response Window
        task_system_state "Response Window"
          action start_timer "Start Timer (FrameTimer)": timer=RW_FrameTimer, duration=16, duration_units=ms
          action assignment "Update Cursor Position X": variable=IO_cursor_x, value=IO_joystickX_calib * 15.2024
          action assignment "Update Cursor Position Y": variable=IO_cursor_y, value=IO_joystickY_calib * -11.4018
          action update_stimulus_display "Update Display"
          transition conditional "If correct target hit": condition=(IO_target_flag1 #AND RDP_direction ==0) #OR (IO_target_flag2 #AND RDP_direction ==90) #OR (IO_target_flag3 #AND RDP_direction ==180) #OR (IO_target_flag4 #AND RDP_direction ==270), target=Hit
          transition conditional "If wrong target, go to error": condition=(IO_target_flag1 #AND RDP_direction !=0) #OR (IO_target_flag2 #AND RDP_direction !=90) #OR (IO_target_flag3 #AND RDP_direction !=180) #OR (IO_target_flag4 #AND RDP_direction !=270), target=Error
          transition timer_expired "If FrameTimer Expired, Transition to Response Window": target=Response Window, timer=RW_FrameTimer
          transition timer_expired "If ResponseTimer Expired, Transition to Miss": target=Miss, timer=ResponseTimer
        task_system_state "Hit"
          action report "report Hit": message=++ outcome: Hit
          action assignment "set Trial outcome to hit": variable=TRIAL_outcome, value="hit"
          action assignment "set SC_in": variable=SC_in, value=1
          transition direct "Always Go to end trial": target=End Trial
        task_system_state "Miss"
          action report "report Miss": message=++ outcome: Miss
          action assignment "set Trial outcome to miss": variable=TRIAL_outcome, value="miss"
          action assignment "set SC_in 0": variable=SC_in, value=0
          transition direct "Always Go to end trial": target=End Trial
        task_system_state "Error"
          action report "report Error": message=++ outcome: Error
          action assignment "set Trial outcome to error": variable=TRIAL_outcome, value="error"
          action assignment "set SC_in 0": variable=SC_in, value=0
          transition direct "Always Go to end trial": target=End Trial
        task_system_state "False Alarm"
          action report "report False alarm": message=++ outcome: False alarm
          action assignment "set Trial outcome to error": variable=TRIAL_outcome, value="false alarm"
          transition direct "Always Go to end trial": target=End Trial
        task_system_state "End Trial"
          action assignment "Assign EXP_ITI": variable=EXP_ITI, value=500
          action if "Dequeue Targets": condition=1
            action dequeue_stimulus "Dequeue Target 1": stimulus=target1
            action dequeue_stimulus "Dequeue Target 2": stimulus=target2
            action dequeue_stimulus "Dequeue Target 3": stimulus=target3
            action dequeue_stimulus "Dequeue Target 4": stimulus=target4
            action dequeue_stimulus "Dequeue Target_coin 1": stimulus=target_coin1
            action dequeue_stimulus "Dequeue Target_coin 2": stimulus=target_coin2
            action dequeue_stimulus "Dequeue Target_coin 3": stimulus=target_coin3
            action dequeue_stimulus "Dequeue Target_coin 4": stimulus=target_coin4
            action dequeue_stimulus "Dequeue Start Area": stimulus=start_area
            action dequeue_stimulus "Dequeue RDP": stimulus=RDP
            action assignment "Reset Target 1 Flag": variable=IO_target_flag1, value=0
            action assignment "Reset Target 2 Flag": variable=IO_target_flag2, value=0
            action assignment "Reset Target 3 Flag": variable=IO_target_flag3, value=0
            action assignment "Reset Target 4 Flag": variable=IO_target_flag4, value=0
          action update_stimulus_display "Update Display"
          action if "Set Matlab variables": condition=1
            action assignment "set ML sync": variable=ML_sync, value=0
            action assignment "set ML trial end": variable=ML_trialEnd, value=ML_trialStart
          action report "report end of cycle": message=END OF TRIAL $ML_trialEnd **********************
          transition direct "Always Go to Wait for joystick": target=Wait for joystick
    action stop_device_IO "stop( Eyelink ) 2": device=Eyelink
  protocol "Pre-test RT": nsamples=1, sampling_method=cycles, selection=sequential
    action queue_stimulus "Queue background": stimulus=background
    action queue_stimulus "Queue area": stimulus=area
    action assignment "Increase Collision Area": variable=EXP_target_collision_area, value=3
    action assignment "Set SNR to 0": variable=RDP_coherence, value=0
    action start_device_IO "Start mIO": device=mIO
    action start_device_IO "start( Eyelink ) 3": device=Eyelink
    action live_queue_stimulus "Live Queue cursor": stimulus=cursor
    action update_stimulus_display "Update Display"
    trial "Main Task System": nsamples=1, sampling_method=cycles, selection=sequential
      task_system "LOOP"
        task_system_state "Wait for joystick"
          action queue_stimulus "Queue start_area": stimulus=start_area
          action queue_stimulus "Queue RDP": stimulus=RDP
          action assignment "Set SNR to 0": variable=RDP_coherence, value=0
          action assignment "Update Cursor Position X": variable=IO_cursor_x, value=IO_joystickX_calib * 15.2024
          action assignment "Update Cursor Position Y": variable=IO_cursor_y, value=IO_joystickY_calib * -11.4018
          action update_stimulus_display "Update Display"
          transition conditional "If Cursor inside start area, go to New Trial": condition=IO_start_area_flag, target=New Trial
          transition conditional "If Cursor inside start area, go to Wait For Joystick": condition=IO_start_area_flag == 0, target=Wait for joystick
        task_system_state "New Trial"
          action if "Set Matlab variables": condition=1
            action assignment "set ML sync": variable=ML_sync, value=1
            action assignment "set ML trial start": variable=ML_trialStart, value=ML_trialStart + 1
            action assignment "Log task name": variable=EXP_task, value="pre-test-RT"
          action assignment "Set Show Target to 0": variable=EXP_showTarget, value=0
          action update_stimulus_display "Update Display"
          action start_timer "Start Timer (TargetTimer)": timer=TargetTimer, duration=disc_rand(500,2000), duration_units=ms
          action report "Report trial start": message====== TRIAL $ML_trialStart STARTS=====
          transition direct "Go to update Wait for Target": target=Wait for Target
        task_system_state "Wait for Target"
          action start_timer "Start Timer (FrameTimer)": timer=FrameTimer, duration=16, duration_units=ms
          action assignment "Update Cursor Position X": variable=IO_cursor_x, value=IO_joystickX_calib * 15.2024
          action assignment "Update Cursor Position Y": variable=IO_cursor_y, value=IO_joystickY_calib * -11.4018
          action update_stimulus_display "Update Display"
          transition timer_expired "If FrameTimer Expired, Transition to Wait for Target": target=Wait for Target, timer=FrameTimer
          transition conditional "if TargetTimer Expired go to Show Target": condition=timer_expired(TargetTimer), target=Show Target
        task_system_state "Show Target"
          action report "Report": message=-- Show Targets
          action live_queue_stimulus "Live Queue cursor 3": stimulus=cursor
          action dequeue_stimulus "Dequeue start_area": stimulus=start_area
          action if "Set up target": condition=1
            action assignment "Randomise position": variable=dice, value=disc_rand(0,11)
            action assignment "Set Target_x position": variable=target_x, value=target_position_x[dice]
            action assignment "Set Target_y position": variable=target_y, value=target_position_y[dice]
            action live_queue_stimulus "Live Queue Target_coin": stimulus=target_coin
            action live_queue_stimulus "Live Queue Target": stimulus=target
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Set Show Target to 1": variable=EXP_showTarget, value=1
          action start_timer "Start ResponseTimer": timer=ResponseTimer, duration=EXP_PreRT_ResponseWindow, duration_units=ms
          action update_stimulus_display "Update Display"
          transition direct "Always Go to ...": target=Response Window
        task_system_state "Response Window"
          action start_timer "Start Timer (FrameTimer)": timer=FrameTimer, duration=16, duration_units=ms
          action assignment "Update Cursor Position X": variable=IO_cursor_x, value=IO_joystickX_calib * 15.2024
          action assignment "Update Cursor Position Y": variable=IO_cursor_y, value=IO_joystickY_calib * -11.4018
          action update_stimulus_display "Update Display"
          transition conditional "If correct target hit": condition=IO_target_flag, target=Hit
          transition timer_expired "If FrameTimer Expired, Transition to Response Window": target=Response Window, timer=FrameTimer
          transition timer_expired "If ResponseTimer Expired, Transition to Miss": target=Miss, timer=ResponseTimer
        task_system_state "Hit"
          action report "report Hit": message=++ outcome: Hit
          action assignment "set Trial outcome to hit": variable=TRIAL_outcome, value="hit"
          action assignment "set SC_in": variable=SC_in, value=1
          transition direct "Always Go to end trial": target=End Trial
        task_system_state "Miss"
          action report "report Miss": message=++ outcome: Miss
          action assignment "set Trial outcome to miss": variable=TRIAL_outcome, value="miss"
          action assignment "set SC_in 0": variable=SC_in, value=0
          transition direct "Always Go to end trial": target=End Trial
        task_system_state "False Alarm"
          action report "report False alarm": message=++ outcome: False alarm
          action assignment "set Trial outcome to error": variable=TRIAL_outcome, value="false alarm"
          transition direct "Always Go to end trial": target=End Trial
        task_system_state "End Trial"
          action assignment "Assign EXP_ITI": variable=EXP_ITI, value=500
          action start_timer "Start ITI_Timer": timer=ITITimer, duration=EXP_ITI, duration_units=ms
          action if "Dequeue Targets": condition=1
            action dequeue_stimulus "Dequeue Target 1": stimulus=target
            action dequeue_stimulus "Dequeue Target_coin": stimulus=target_coin
            action dequeue_stimulus "Dequeue Start Area": stimulus=start_area
            action assignment "Reset Target Flag": variable=IO_target_flag, value=0
          action update_stimulus_display "Update Display"
          action if "Set Matlab variables": condition=1
            action assignment "set ML sync": variable=ML_sync, value=0
            action assignment "set ML trial end": variable=ML_trialEnd, value=ML_trialStart
          action report "report end of cycle": message=END OF TRIAL $ML_trialEnd **********************
          transition direct "Always Go to ITI": target=ITI
        task_system_state "ITI"
          action start_timer "Start Timer (FrameTimer)": timer=FrameTimer, duration=16, duration_units=ms
          action assignment "Update Cursor Position X": variable=IO_cursor_x, value=IO_joystickX_calib * 15.2024
          action assignment "Update Cursor Position Y": variable=IO_cursor_y, value=IO_joystickY_calib * -11.4018
          transition timer_expired "If FrameTimer Expired, Transition to ITI": target=ITI, timer=FrameTimer
          transition timer_expired "If ITI_Timer Expired, Transition to Wait for joystick": target=Wait for joystick, timer=ITITimer
    action stop_device_IO "stop( Eyelink ) 3": device=Eyelink
  protocol "Steady+Target": nsamples=1, sampling_method=cycles, selection=sequential, interruptible=1
    action assignment "Determine Seed for alpha": variable=alpha, value=0
    action queue_stimulus "Queue area": stimulus=area
    action assignment "Decrease Collision Area": variable=EXP_target_collision_area, value=2
    action start_device_IO "Start mIO": device=mIO
    action start_device_IO "start( Eyelink ) 4": device=Eyelink
    action update_stimulus_display "Update Display"
    trial "Main Task System": nsamples=10, sampling_method=cycles, selection=random_without_replacement
      range_replicator "Directions": from=0, to=270, step=90, variable=LOC_alpha
        task_system "LOOP"
          task_system_state "Start or Continue"
            action assignment "Update Cursor Position X": variable=IO_cursor_x, value=IO_joystickX_calib * 15.2024
            action assignment "Update Cursor Position Y": variable=IO_cursor_y, value=IO_joystickY_calib * -11.4018
            action update_stimulus_display "Update Display"
            transition conditional "if Coming from No Target state, go to Set up the Target": condition=EXP_no_target_flag, target=New Trial
            transition conditional "if Coming from other states, go to Wait For joystick": condition=EXP_no_target_flag == 0, target=Wait For joystick
          task_system_state "Wait For joystick"
            action dequeue_stimulus "Dequeue Start Area": stimulus=start_area
            action queue_stimulus "Queue start_area": stimulus=start_area
            action live_queue_stimulus "Live Queue RDP": stimulus=RDP
            action live_queue_stimulus "Live Queue cursor": stimulus=cursor
            action assignment "Set RDP Speed to 0": variable=RDP_speed, value=0
            action update_stimulus_display "Update Display"
            transition conditional "If Cursor inside start area, go to New Trial": condition=IO_start_area_flag, target=New Trial
          task_system_state "New Trial"
            action dequeue_stimulus "Dequeue start_area": stimulus=start_area
            action if "Set Matlab variables": condition=1
              action assignment "set ML sync": variable=ML_sync, value=1
              action assignment "set ML trial start": variable=ML_trialStart, value=ML_trialStart + 1
              action assignment "Log task name": variable=EXP_task, value="Steady+Target"
            action assignment "Set RDP Speed to 4": variable=RDP_speed, value=4
            action assignment "Set RDP coherence": variable=RDP_coherence, value=rand(EXP_snr_min, EXP_snr_max)
            action assignment "Set RDP coherence max": variable=EXP_snr_max, value=EXP_snr_min + (EXP_snr_min * (1/3))
            action assignment "Set RDP direction": variable=RDP_direction, value=LOC_alpha
            action assignment "Set Steady Duration": variable=EXP_SteadyStateDuration, value=disc_rand(500,1000)
            action update_stimulus_display "Update Display"
            action report "Report trial start": message====== TRIAL $ML_trialStart STARTS=====
            action start_timer "Start Timer (SteadyStateDurationTimer)": timer=SteadyStateDurationTimer, duration=EXP_SteadyStateDuration, duration_units=ms
            transition direct "Go to Set up the Target": target=Set up the Target
          task_system_state "Set up the Target"
            action report "Report current state name": message=- Set up the Target
            action assignment "Reset Target switch": variable=IO_target_phase, value=0
            action assignment "Reset Target as shown": variable=IO_target_shown, value=0
            action assignment "Reset Transparency": variable=IO_target_alpha, value=1
            action assignment "Reset no target state flag": variable=EXP_no_target_flag, value=0
            action dequeue_stimulus "Dequeue Stimulus": stimulus=target
            action update_stimulus_display "Update Display"
            transition direct "Always Go to Define Updated Stimulus": target=Update Stimulus
          task_system_state "Update Stimulus"
            action assignment "Update Cursor Position X": variable=IO_cursor_x, value=IO_joystickX_calib * 15.2024
            action assignment "Update Cursor Position Y": variable=IO_cursor_y, value=IO_joystickY_calib * -11.4018
            action start_timer "Start Timer (FrameTimer)": timer=FrameTimer, duration=16, duration_units=ms
            transition timer_expired "If FrameTimer Expired, Transition to Update Stimulus": target=Update Stimulus, timer=FrameTimer
            transition conditional "If SteadyStateDurationTimer has Expired, go to Flash the Target": condition=timer_expired(SteadyStateDurationTimer), target=Flash the Target
            transition conditional "If Cursor out of RDP area, go to Abort the Trial": condition=IO_area_flag #AND IO_RDP_flag == 0 #AND IO_target_flag == 0, target=Abort Trial
          task_system_state "Flash the Target"
            action assignment "Throw dice for target": variable=dice, value=disc_rand(1,3)
            action if "if dice is 1": condition=dice == 1
              action report "Report current state name": message=- Flash the target
              action assignment "Set alpha to current RDP direction": variable=n_alpha, value=RDP_direction
              action assignment "Set Target x position": variable=target_x, value=sin((n_alpha)*(pi/180))*(RDP_radius + (IO_target_size/2))
              action assignment "Set Target y position": variable=target_y, value=cos((n_alpha)*(pi/180))*(RDP_radius+ (IO_target_size/2))
              action live_queue_stimulus "Live Queue Target": stimulus=target
              action live_queue_stimulus "Live Queue Target_coin": stimulus=target_coin
              action update_stimulus_display "Update Display"
              action assignment "Set Target as shown": variable=IO_target_shown, value=1
              action start_timer "Start Timer (TargetDurationTimer)": timer=TargetTimer, duration=EXP_response_window, duration_units=ms
            action assignment "Flip Target phase switch": variable=IO_target_phase, value=1
            action report "Report dice result": message=- Dice $dice
            transition conditional "If Target will be shown, go to Update Stimulus and Target": condition=IO_target_shown, target=Update Stimulus and Target
            transition conditional "If Target will NOT be shown, go to No Target": condition=IO_target_shown == 0, target=No Target
          task_system_state "Update Stimulus and Target"
            action assignment "Update Cursor Position X": variable=IO_cursor_x, value=IO_joystickX_calib * 15.2024
            action assignment "Update Cursor Position Y": variable=IO_cursor_y, value=IO_joystickY_calib * -11.4018
            action start_timer "Start Timer (FrameTimer)": timer=FrameTimer, duration=16, duration_units=ms
            transition timer_expired "If FrameTimer Expired, Transition to Update Stimulus": target=Update Stimulus and Target, timer=FrameTimer
            transition conditional "If TargetDurationTimer has Expired, go to Missed": condition=timer_expired(TargetTimer), target=Missed
            transition conditional "If Cursor on Target, go to Deliver Reward": condition=IO_target_flag, target=Deliver Reward
            transition conditional "If Cursor out of RDP area, go to Abort the Trial": condition=IO_area_flag #AND IO_RDP_flag == 0 #AND IO_target_flag == 0, target=Abort Trial
          task_system_state "Missed"
            action report "report Missed": message=++ outcome: Missed
            action accept_selections "Accept Selections": selection=Main Task System
            action assignment "Set SC_in to 0": variable=SC_in, value=0
            action dequeue_stimulus "Dequeue Target": stimulus=target
            action dequeue_stimulus "Dequeue Target_coin": stimulus=target_coin
            action assignment "increment missed": variable=ignore, value=ignore + 1
            action play_sound "Play Sound Jump": sound=sound_jump
            action assignment "set Trial outcome to mis": variable=TRIAL_outcome, value="mis"
            action report "report new cycle": message=*****************************
            transition direct "Always Go to Make Target Disappear": target=Make Target Disappear
          task_system_state "Deliver Reward"
            action report "report Hit": message=++ outcome: Hit
            action accept_selections "Accept Selections": selection=Main Task System
            action if "Turn start area green": condition=1
              action assignment "Assign Variable 3": variable=start_r, value=0
              action assignment "Assign Variable 4": variable=start_g, value=1
              action assignment "Assign Variable 5": variable=start_b, value=0
            action assignment "IO_rewardA = 0.25": variable=IO_rewardA, value=EXP_dropsize
            action assignment "Set RDP Coherence to 0": variable=RDP_coherence, value=0
            action assignment "increment success": variable=success, value=success + 1
            action assignment "set Trial outcome to hit": variable=TRIAL_outcome, value="hit"
            action play_sound "Play Sound Coin": sound=sound_coin
            action update_stimulus_display "Update Display"
            action report "report Response Window (EXP_TargetDuration)": message=$EXP_TargetDuration
            action report "report new cycle": message=*****************************
            action start_timer "Start Timer for Hit Feedback": timer=FeedbackTimer, duration=250, duration_units=ms
            transition direct "Always Go to Make Target Disappear": target=Make Target Disappear
          task_system_state "No Target"
            action report "report No Target": message=++ outcome: No Target
            action reject_selections "Reject Selections": selection=Main Task System
            action assignment "set Trial outcome to no Target": variable=TRIAL_outcome, value="noT"
            action assignment "Flag as no target state": variable=EXP_no_target_flag, value=1
            action report "report new cycle": message=*****************************
            transition direct "Always Go to Set up End Trial (no cursor reset)": target=End Trial (no cursor reset)
          task_system_state "Abort Trial"
            action report "report Hit": message=!!! cursor out of area: Trial Aborted
            action reject_selections "Reject Selections": selection=Main Task System
            action assignment "Aborted Switch ON": variable=aborted, value=1
            action assignment "Set RDP speed to 0": variable=RDP_speed, value=0
            action queue_stimulus "Queue start_area": stimulus=start_area
            action update_stimulus_display "Update Display"
            action report "report new cycle": message=*****************************
            transition direct "Always Go to End Trial": target=End Trial
          task_system_state "Make Target Disappear"
            action assignment "Set RDP Coherence to 0": variable=RDP_coherence, value=0
            action queue_stimulus "Queue start_area": stimulus=start_area
            action update_stimulus_display "Update Display"
            action assignment "Reset Transparency": variable=IO_target_alpha, value=IO_target_alpha - EXP_fadeOutRate
            action start_timer "Start Timer for Refreshing": timer=FeedbackRefreshTimer, duration=16, duration_units=ms
            transition conditional "If Feedback Refresh Timer has Expired but Timer Feedback has not expired, reload Make Target Disappear": condition=timer_expired(FeedbackRefreshTimer) #AND timer_expired(FeedbackTimer)==0, target=Make Target Disappear
            transition timer_expired "If Timer for Feedback Expired, Transition to End Trial": target=End Trial, timer=FeedbackTimer
          task_system_state "End Trial"
            action start_timer "Start Timer": timer=ITITimer, duration=EXP_ITI, duration_units=ms
            action dequeue_stimulus "Dequeue Target": stimulus=target
            action dequeue_stimulus "Dequeue Target_coin": stimulus=target_coin
            action assignment "Update Cursor Position X": variable=IO_cursor_x, value=IO_joystickX_calib * 15.2024
            action assignment "Update Cursor Position Y": variable=IO_cursor_y, value=IO_joystickY_calib * -11.4018
            action queue_stimulus "Queue Start Area": stimulus=start_area
            action update_stimulus_display "Update Display"
            action if "Set Matlab variable": condition=1
              action assignment "set ML sync": variable=ML_sync, value=0
              action assignment "set ML trial end": variable=ML_trialEnd, value=ML_trialStart
            transition conditional "If Cursor outside starting area, go to End Trial": condition=IO_start_area_flag = 0, target=End Trial
            transition conditional "If Timer has expired and Cursor inside Start area, Go to Exit Experiment": condition=timer_expired(ITITimer) AND IO_start_area_flag, target=Exit Experiment
          task_system_state "End Trial (no cursor reset)"
            action start_timer "Start Timer": timer=ITITimer, duration=EXP_ITI, duration_units=ms
            action dequeue_stimulus "Dequeue Target": stimulus=target
            action dequeue_stimulus "Dequeue Target_coin": stimulus=target_coin
            action update_stimulus_display "Update Display"
            action if "Set Matlab variables": condition=1
              action assignment "set ML sync": variable=ML_sync, value=0
              action assignment "set ML trial end": variable=ML_trialEnd, value=ML_trialStart
            transition direct "Always Go to Exit Experiment": target=Exit Experiment
          task_system_state "Exit Experiment"
            transition yield "Exit Task System..."
    action dequeue_stimulus "Dequeue background": stimulus=background
    action update_stimulus_display "Update Stimulus Display"
    action stop_device_IO "Stop Joystick": device=mIO
    action stop_device_IO "stop( Eyelink ) 4": device=Eyelink
  protocol "Switch+Target": nsamples=1, sampling_method=cycles, selection=sequential, interruptible=1
    action assignment "Set Staircase Starting point": variable=SC_index_starting, value=1
    action assignment "Reset Start area to 0 (x)": variable=IO_start_area_x, value=0
    action assignment "Reset Start area to 0 (y)": variable=IO_start_area_y, value=0
    action assignment "Determine Seed for alpha": variable=alpha, value=0
    action assignment "Assign shift type": variable=LOC_type, value=1
    action queue_stimulus "Queue background": stimulus=background
    action queue_stimulus "Queue area": stimulus=area
    action start_device_IO "Start mIO": device=mIO
    action start_device_IO "start( Eyelink ) 5": device=Eyelink
    action update_stimulus_display "Update Display"
    trial "Main Task System": nsamples=3, sampling_method=cycles, selection=random_without_replacement
      range_replicator "Number of Frames": from=25, to=43, step=6, variable=LOC_frames
        range_replicator "Stepsize": from=1, to=4, step=1, variable=LOC_stepsize
          task_system "LOOP"
            task_system_state "Start or Continue"
              action assignment "Update Cursor Position X": variable=IO_cursor_x, value=IO_joystickX_calib * 15.2024
              action assignment "Update Cursor Position Y": variable=IO_cursor_y, value=IO_joystickY_calib * -11.4018
              action update_stimulus_display "Update Display"
              transition conditional "if Coming from No Target state, go to Set up the Target": condition=EXP_no_target_flag, target=New Trial
              transition conditional "if Coming from other states, go to Wait For joystick": condition=EXP_no_target_flag == 0, target=Wait For joystick
            task_system_state "Wait For joystick"
              action dequeue_stimulus "Dequeue Start Area": stimulus=start_area
              action queue_stimulus "Queue start_area": stimulus=start_area
              action live_queue_stimulus "Live Queue RDP": stimulus=RDP
              action assignment "Set RDP coherence": variable=RDP_coherence, value=rand(EXP_snr_min, EXP_snr_max)
              action live_queue_stimulus "Live Queue cursor": stimulus=cursor
              action assignment "Set RDP Speed to 0": variable=RDP_speed, value=0
              action assignment "Pick RDP direction from uniform distribution": variable=alpha, value=disc_rand(0,359)
              action update_stimulus_display "Update Display"
              transition conditional "If Cursor inside start area, go to New Trial": condition=IO_start_area_flag, target=New Trial
            task_system_state "New Trial"
              action if "Set Matlab variables": condition=1
                action assignment "set ML sync": variable=ML_sync, value=1
                action assignment "set ML trial start": variable=ML_trialStart, value=ML_trialStart + 1
                action assignment "Log task name": variable=EXP_task, value="Switch+Target"
              action dequeue_stimulus "Dequeue start_area": stimulus=start_area
              action assignment "Set RDP Speed to 4": variable=RDP_speed, value=4
              action next_selection "Pick another value for coherence": selection=SEL_snr
              action assignment "Set RDP coherence to SC_out": variable=RDP_coherence, value=SC_out
              action assignment "Start Score Timer": variable=FB_scoreTimer, value=0
              action if "If debug mode": condition=EXP_debug
                action live_queue_stimulus "live Queue Midline": stimulus=midline
              action update_stimulus_display "Update Display"
              action report "Report trial start": message====== TRIAL $ML_trialStart STARTS=====
              transition direct "Go to Set up the Target": target=Set up the Target
            task_system_state "Set up the Target"
              action if "Store trial parameters to global variables": condition=1
                action assignment "Save LOC_type to global variable": variable=EXP_shiftType, value=LOC_type
                action assignment "Save LOC_frames to global variable": variable=EXP_shiftFrames, value=LOC_frames
                action assignment "Save LOC_stepsize to global variable": variable=EXP_stepsize, value=LOC_stepsize
              action report "Report current state name": message=- Set up the Target
              action report "Report LOCAL variables": message=Frames: $LOC_frames; StepSize: $LOC_stepsize; Type: $LOC_type
              action assignment "Determine SwitchDurationTimer": variable=EXP_SwitchDuration, value=LOC_frames * EXP_refreshRate
              action report "Report selected switch timer": message=- Switch will last: $EXP_SwitchDuration
              action assignment "Reset Target switch": variable=IO_target_phase, value=0
              action assignment "Reset Target as shown": variable=IO_target_shown, value=0
              action assignment "Reset Transparency": variable=IO_target_alpha, value=1
              action assignment "Reset no target state flag": variable=EXP_no_target_flag, value=0
              action dequeue_stimulus "Dequeue Stimulus": stimulus=target
              action update_stimulus_display "Update Display"
              action start_timer "Start Timer (SwitchDurationTimer)": timer=SwitchDurationTimer, duration=EXP_SwitchDuration, duration_units=ms
              action start_timer "Start Timer (SteadyStateDurationTimer)": timer=SteadyStateDurationTimer, duration=EXP_SwitchDuration + EXP_SteadyStateDuration, duration_units=ms
              action start_timer "Start Timer (TargetDurationTimer)": timer=TargetDurationTimer, duration=EXP_SwitchDuration + EXP_SteadyStateDuration + EXP_TargetDuration, duration_units=ms
              action start_timer "Start Timer (IEIDurationTimer)": timer=IEIDurationTimer, duration=EXP_SwitchDuration + EXP_SteadyStateDuration + EXP_TargetDuration + EXP_IEIDuration, duration_units=ms
              transition direct "Always Go to Define next Target": target=Define next Target
            task_system_state "Define next Target"
              action report "Report current state name": message=- Define Next Target
              action if "Determine next alpha value": condition=1
                action assignment "Assign next alpha from range": variable=n_alpha, value=LOC_frames * (LOC_stepsize/3)
                action assignment "Flip coin for next alpha sign": variable=coin, value=disc_rand(0,1)
                action if "If coin == 0 set n_alpha to positive": condition=coin == 0
                  action assignment "Assign sign to next alpha": variable=n_alpha, value=alpha + n_alpha
                action if "If coin == 1 set n_alpha to negative": condition=coin == 1
                  action assignment "Assign sign to next alpha": variable=n_alpha, value=alpha - n_alpha
              action assignment "Store original alpha": variable=o_alpha, value=alpha
              action if "If the shift is set to be time dependent": condition=LOC_type == 1
                action assignment "Determine the change per frame (stepsize)": variable=stepsize, value=((n_alpha - alpha) / (EXP_SwitchDuration / EXP_refreshRate))
              action update_stimulus_display "Update Display"
              action report "Report Switch Duration": message=- Switch Duration $EXP_SwitchDuration
              action report "Report Coherence level": message=- Coherence $RDP_coherence
              transition direct "Always Go to Update Stimulus": target=Update Stimulus
            task_system_state "Flash the Target"
              action assignment "Throw dice for target": variable=dice, value=disc_rand(1,3)
              action if "if LOC_target is 1": condition=dice == 1
                action report "Report current state name": message=- Flash the target
                action assignment "Set alpha to current RDP direction": variable=n_alpha, value=RDP_direction
                action assignment "Set Target x position": variable=target_x, value=sin((n_alpha)*(pi/180))*(RDP_radius + (IO_target_size/2))
                action assignment "Set Target y position": variable=target_y, value=cos((n_alpha)*(pi/180))*(RDP_radius+ (IO_target_size/2))
                action live_queue_stimulus "Live Queue Target": stimulus=target
                action live_queue_stimulus "Live Queue Target_coin": stimulus=target_coin
                action update_stimulus_display "Update Display"
                action pulse "Pulse Variable": variable=IO_target_ON, duration=EXP_TargetDuration * 1000
                action assignment "Set Target as shown": variable=IO_target_shown, value=1
              action assignment "Flip Target phase switch": variable=IO_target_phase, value=1
              action report "Report dice result": message=- Dice $dice
              transition direct "Always Go to Update Stimulus": target=Update Stimulus
            task_system_state "Update Stimulus"
              action assignment "Update Cursor Position X": variable=IO_cursor_x, value=IO_joystickX_calib * 15.2024
              action assignment "Update Cursor Position Y": variable=IO_cursor_y, value=IO_joystickY_calib * -11.4018
              action if "While the Switch Duration Timer is active ...": condition=timer_expired(SwitchDurationTimer) == 0
                action if "... change RDP direction": condition=1
                  action assignment "Calculate Positive Exponential Shift": variable=alpha, value=alpha + ((n_alpha - alpha) / (EXP_SwitchDuration / EXP_framerate))
                  action assignment "Calculate Linear Shift": variable=o_alpha, value=o_alpha + stepsize
                  action if "If the shift is set to linear": condition=LOC_type == 1
                    action assignment "Set RDP motion to linear increase": variable=RDP_direction, value=o_alpha
                  action if "If the shift is set to be step dependent": condition=LOC_type == 2
                    action assignment "Set RDP motion according to updated alpha": variable=RDP_direction, value=alpha
              action start_timer "Start Timer (FrameTimer)": timer=FrameTimer, duration=16, duration_units=ms
              transition timer_expired "If FrameTimer Expired, Transition to Update Stimulus": target=Update Stimulus, timer=FrameTimer
              transition conditional "If SteadyStateDurationTimer has Expired, and Target phase is 0, go to Flash the Target": condition=timer_expired(SteadyStateDurationTimer) #AND IO_target_phase == 0, target=Flash the Target
              transition conditional "If Target timer has expired and no target was presented go to Set up the Target": condition=timer_expired(TargetDurationTimer) #AND IO_target_phase #AND IO_target_shown == 0, target=No Target
              transition conditional "If Target timer has expired and target was presented go to Missed": condition=timer_expired(TargetDurationTimer) #AND IO_target_shown, target=Missed
              transition conditional "If Target phase 1, and cursor on Target, go to Deliver Reward": condition=IO_target_flag #AND IO_target_ON, target=Deliver Reward
              transition conditional "If Cursor out of RDP area, go to Abort the Trial": condition=IO_area_flag #AND IO_RDP_flag == 0 #AND IO_target_flag == 0, target=Abort Trial
            task_system_state "Missed"
              action report "report Missed": message=++ outcome: Missed
              action accept_selections "Accept Selections": selection=Main Task System
              action assignment "Set SC_in to 0": variable=SC_in, value=0
              action dequeue_stimulus "Dequeue Target": stimulus=target
              action dequeue_stimulus "Dequeue Target_coin": stimulus=target_coin
              action assignment "increment missed": variable=ignore, value=ignore + 1
              action play_sound "Play Sound Jump": sound=sound_jump
              action assignment "set Trial outcome to mis": variable=TRIAL_outcome, value="mis"
              action if "Adjust Feedback": condition=1
                action assignment "Increase size of counter_all bar": variable=FB_counter_all_size_y, value=FB_counter_all_size_y + ((FB_ruler_size_y/2) / EXP_total_events)
                action assignment "Change counter_all bar y position": variable=FB_counter_all_y, value=(-FB_ruler_size_y / 2) + (FB_counter_all_size_y/2)
              action if "Set Matlab variables": condition=1
                action assignment "set ML sync": variable=ML_sync, value=0
                action assignment "set ML trial end": variable=ML_trialEnd, value=ML_trialStart
              action report "report new cycle": message=*****************************
              transition direct "Always Go to Make Target Disappear": target=Make Target Disappear
            task_system_state "No Target"
              action report "report No Target": message=++ outcome: No Target
              action assignment "set Trial outcome to no Target": variable=TRIAL_outcome, value="noT"
              action assignment "Flag as no target state": variable=EXP_no_target_flag, value=1
              action report "report new cycle": message=*****************************
              transition direct "Always Go to Set up the Target": target=Set up the Target
            task_system_state "Deliver Reward"
              action report "report Hit": message=++ outcome: Hit
              action accept_selections "Accept Selections": selection=Main Task System
              action assignment "Set SC_in to 1": variable=SC_in, value=1
              action if "Turn start area green": condition=1
                action assignment "Assign Variable 3": variable=start_r, value=0
                action assignment "Assign Variable 4": variable=start_g, value=1
                action assignment "Assign Variable 5": variable=start_b, value=0
              action assignment "IO_rewardA = 0.25": variable=IO_rewardA, value=EXP_dropsize
              action assignment "Set RDP Coherence to 0": variable=RDP_coherence, value=0
              action assignment "increment success": variable=success, value=success + 1
              action assignment "increment score": variable=EXP_score, value=EXP_score + 1
              action if "If more than 20 successful events ...": condition=success < 19
                action assignment "... reduce Response Window (EXP_TargetDuration)": variable=EXP_TargetDuration, value=EXP_TargetDuration - 80
              action if "Adjust Feedback": condition=1
                action assignment "Increase size of counter bar": variable=FB_counter_size_y, value=FB_counter_size_y + ((FB_ruler_size_y/2) / EXP_total_events)
                action assignment "Increase size of counter_all bar": variable=FB_counter_all_size_y, value=FB_counter_all_size_y + ((FB_ruler_size_y/2) / EXP_total_events)
                action assignment "Change counter bar y position": variable=FB_counter_y, value=(-FB_ruler_size_y / 2) + (FB_counter_size_y/2)
                action assignment "Change counter_all bar y position": variable=FB_counter_all_y, value=(-FB_ruler_size_y / 2) + (FB_counter_all_size_y/2)
                action bring_stimulus_to_front "Bring stimulus to front": stimulus=counter
              action assignment "set Trial outcome to hit": variable=TRIAL_outcome, value="hit"
              action play_sound "Play Sound Coin": sound=sound_coin
              action if "Set Matlab variables": condition=1
                action assignment "set ML sync": variable=ML_sync, value=0
                action assignment "set ML trial end": variable=ML_trialEnd, value=ML_trialStart
              action update_stimulus_display "Update Display"
              action report "report Response Window (EXP_TargetDuration)": message=$EXP_TargetDuration
              action report "report new cycle": message=*****************************
              action start_timer "Start Timer for Hit Feedback": timer=FeedbackTimer, duration=250, duration_units=ms
              transition direct "Always Go to Make Target Disappear": target=Make Target Disappear
            task_system_state "Abort Trial"
              action report "report Hit": message=!!! cursor out of area: Trial Aborted
              action assignment "Aborted Switch ON": variable=aborted, value=1
              action assignment "Set RDP speed to 0": variable=RDP_speed, value=0
              action if "Set Matlab variables": condition=1
                action assignment "set ML sync": variable=ML_sync, value=0
                action assignment "set ML trial end": variable=ML_trialEnd, value=ML_trialStart
              action queue_stimulus "Queue start_area": stimulus=start_area
              action update_stimulus_display "Update Display"
              action report "report new cycle": message=*****************************
              transition direct "Always Go to End Trial": target=End Trial
            task_system_state "Make Target Disappear"
              action assignment "Set RDP Coherence to 0": variable=RDP_coherence, value=0
              action queue_stimulus "Queue start_area": stimulus=start_area
              action update_stimulus_display "Update Display"
              action assignment "Reset Transparency": variable=IO_target_alpha, value=IO_target_alpha - EXP_fadeOutRate
              action start_timer "Start Timer for Refreshing": timer=FeedbackRefreshTimer, duration=16, duration_units=ms
              transition conditional "If Feedback Refresh Timer has Expired but Timer Feedback has not expired, reload Make Target Disappear": condition=timer_expired(FeedbackRefreshTimer) #AND timer_expired(FeedbackTimer)==0, target=Make Target Disappear
              transition timer_expired "If Timer for Feedback Expired, Transition to End Trial": target=End Trial, timer=FeedbackTimer
            task_system_state "End Trial"
              action start_timer "Start Timer": timer=ITITimer, duration=EXP_ITI, duration_units=ms
              action if "Turn cursor white": condition=1
                action assignment "Assign Variable 3": variable=start_r, value=0
                action assignment "Assign Variable 4": variable=start_g, value=0
                action assignment "Assign Variable 5": variable=start_b, value=0
              action dequeue_stimulus "Dequeue Target": stimulus=target
              action dequeue_stimulus "Dequeue Target_coin": stimulus=target_coin
              action assignment "Update Cursor Position X": variable=IO_cursor_x, value=IO_joystickX_calib * 15.2024
              action assignment "Update Cursor Position Y": variable=IO_cursor_y, value=IO_joystickY_calib * -11.4018
              action queue_stimulus "Queue Start Area": stimulus=start_area
              action update_stimulus_display "Update Display"
              transition conditional "If Cursor outside starting area, go to End Trial": condition=IO_start_area_flag = 0, target=End Trial
              transition conditional "If Timer has expired and Cursor inside Start area, Go to Exit Experiment": condition=timer_expired(ITITimer) AND IO_start_area_flag, target=Exit Experiment
            task_system_state "Exit Experiment"
              transition yield "Exit Task System..."
    action dequeue_stimulus "Dequeue background": stimulus=background
    action update_stimulus_display "Update Stimulus Display"
    action stop_device_IO "Stop Joystick": device=mIO
    action stop_device_IO "stop( Eyelink ) 5": device=Eyelink
