monkeyml version=1.0
io_devices "IO Devices"
  iodevice stimulus_display "Stimulus Display": background_color=0, 0, 0, redraw_on_every_refresh=NO, announce_stimuli_on_implicit_updates=YES
  iodevice mIO "mIO": data_interval=1ms, joystick_direction=IO_joystickDirection, joystick_strength=IO_joystickStrength, joystick_x_raw=IO_joystickX_raw, joystick_y_raw=IO_joystickY_raw, joystick_x_calib=IO_joystickX_calib, joystick_y_calib=IO_joystickY_calib, reward_a=IO_rewardA
variables "Variables"
  folder "CTRL"
    variable any "CTRL_RequiredHitNo": default_value=100
    variable any "CTRL_HoldTarget_ms": default_value=500
    variable any "CTRL_ITI_ms": default_value=1000
    variable any "CTRL_steadyState_min": default_value=500
    variable list "CTRL_directionChange_list": default_value=45,90,135,180
    variable any "CTRL_trial_min": default_value=10000
    variable any "CTRL_trial_max": default_value=20000
    variable any "CTRL_trial_duration": default_value=0
    variable any "CTRL_frameTimer_duration": default_value=16
    variable any "CTRL_SteadyStateDuration": default_value=0
    variable any "CTRL_Time2Target": default_value=0
    variable any "CTRL_snr_min": default_value=.9
    variable any "CTRL_snr_max": default_value=1
    variable any "CTRL_Xmax": default_value=15.2024
    variable any "CTRL_Ymax": default_value=11.4018
    variable any "CTRL_start_area_colorChange_ms": default_value=500
    variable any "CTRL_start_area_col_r": default_value=0
    variable any "CTRL_start_area_col_g": default_value=0
    variable any "CTRL_start_area_col_b": default_value=0
    variable any "CTRL_target_size": default_value=2
    variable any "CTRL_target_ON": default_value=0
    variable any "CTRL_target_duration": default_value=1000
    variable any "CTRL_target_x": default_value=0
    variable any "CTRL_target_y": default_value=9.25
    variable any "CTRL_target_alpha": default_value=0.5
    variable any "CTRL_target_col_r": default_value=.5
    variable any "CTRL_target_col_g": default_value=.5
    variable any "CTRL_target_col_b": default_value=.5
    variable any "CTRL_target_flag": default_value=0
    variable any "CTRL_target_flag1": default_value=0
    variable any "CTRL_target_flag2": default_value=0
    variable any "CTRL_target_flag3": default_value=0
    variable any "CTRL_target_flag4": default_value=0
    variable any "CTRL_target_collision_area": default_value=2
    variable any "CTRL_arc_width": default_value=0
    variable any "CTRL_arc_size": default_value=20
    variable any "CTRL_arc_flag": default_value=0
    variable any "CTRL_arc_alpha": default_value=0
    variable any "CTRL_arc_trigger_min": default_value=0.5
    variable any "CTRL_arc_trigger_max": default_value=0.5
    variable any "CTRL_arc_col_r": default_value=1
    variable any "CTRL_arc_col_g": default_value=1
    variable any "CTRL_arc_col_b": default_value=0
    variable any "CTRL_arcMask_size": default_value=17
    variable any "CTRL_arcMask_flag": default_value=0
    variable any "CTRL_PreSNR_TargetDuration": default_value=1000
    variable any "CTRL_PreSNR_ResponseWindow": default_value=3000
  folder "INFO"
    variable any "INFO_task": default_value=0
    variable any "INFO_HitCounter": default_value=0
    variable any "INFO_cursor_accuracyDisplay": default_value=0
    variable any "INFO_ExtraCash": default_value=0
  folder "IO"
    variable float "IO_joystickDirection": default_value=0
    variable any "IO_joystickStrength": default_value=0
    variable integer "IO_joystickX_raw": default_value=0
    variable integer "IO_joystickY_raw": default_value=0
    variable float "IO_joystickX_calib": default_value=0
    variable float "IO_joystickY_calib": default_value=0
    variable any "IO_start_area_flag": default_value=0
    variable any "IO_start_area_size": default_value=2
    variable any "IO_rewardA": default_value=0
    variable any "IO_cursor_distance2center": default_value=0
    variable any "IO_cursor_accuracy": default_value=0
    variable any "IO_cursor_x": default_value=0
    variable any "IO_cursor_y": default_value=0
  folder "TMP"
    variable any "pi": default_value=3.14159265359
    variable any "TMP_dice": default_value=0
    variable any "TMP_RDPdir": default_value=0
    variable any "TMP_stimDir": default_value=0
    variable any "TMP_joyDeviation": default_value=0
    variable any "TMP_normStimDir": default_value=0
    variable any "TMP_normJoyDir": default_value=0
    variable any "TMP_scalingFactor": default_value=0
    variable any "TMP_steady_ts": default_value=0
    variable any "TMP_ExtraCash": default_value=0
  folder "RDP"
    variable any "RDP_radius": default_value=8
    variable any "RDP_direction": default_value=0
    variable any "RDP_y": default_value=0
    variable any "RDP_x": default_value=0
    variable any "RDP_density": default_value=5
    variable any "RDP_dotsize": default_value=0.2
    variable any "RDP_speed": default_value=4
    variable any "RDP_coherence": default_value=0
    variable any "RDP_lifetime": default_value=0.3
  folder "ML"
    variable integer "ML_trialEnd": default_value=0
    variable integer "ML_trialStart": default_value=0
    variable boolean "ML_sync": default_value=0
  folder "TRIAL"
    variable any "TRIAL_outcome": default_value=0
  folder "SC"
    variable any "SC_steps": default_value="1 0.95 0.903 0.858 0.815 0.774 0.735 0.698 0.663 0.63 0.599 0.569 0.541 0.514 0.488 0.464 0.441 0.419 0.398 0.378 0.359 0.341 0.324 0.308 0.293 0.278 0.264 0.251 0.238 0.226 0.215 0.204 0.194 0.184 0.175 0.166 0.158 0.15 0.143 0.136 0.129 0.123 0.117 0.111 0.105 0.1 0.095 0.09"
    variable boolean "SC_in": default_value=0, persistant=0
    variable float "SC_out": default_value=0, persistant=0
    variable integer "SC_left_step": default_value=1, persistant=1
    variable integer "SC_left_rate": default_value=4, persistant=1
    variable integer "SC_right_step": default_value=3, persistant=1
    variable integer "SC_right_rate": default_value=1, persistant=1
    variable integer "SC_index_starting": default_value=1, persistant=1
sounds "Sounds"
  sound wav_file "Reward": path=./sounds/reward.wav, amplitude=1.0
stimuli "Stimuli"
  stimulus blank_screen "Background": color=0.5,0.5,0.5
  stimulus circular_fixation_point "start_area": color=CTRL_start_area_col_r,CTRL_start_area_col_g,CTRL_start_area_col_b, trigger_width=IO_start_area_size, trigger_watch_x=IO_cursor_x, trigger_watch_y=IO_cursor_y, trigger_flag=IO_start_area_flag, x_size=IO_start_area_size, y_size=IO_start_area_size, x_position=0, y_position=0, rotation=0, alpha_multiplier=.3
  stimulus r_d_p "RDP": radius=RDP_radius, x_position=RDP_x, y_position=RDP_y, dot_density=RDP_density, dot_size=RDP_dotsize, color=1,1,1, alpha_multiplier=1.0, direction=RDP_direction, speed=RDP_speed, coherence=RDP_coherence, lifetime=RDP_lifetime, announce_dots=NO, autoplay=YES
  stimulus circular_fixation_point "cursor": color=CTRL_arc_col_r,CTRL_arc_col_g,CTRL_arc_col_b, trigger_width=0, trigger_watch_x=0, trigger_watch_y=0, trigger_flag=0, x_size=1, y_size=1, x_position=-CTRL_Xmax * IO_joystickX_calib, y_position=CTRL_Ymax * IO_joystickY_calib, rotation=0, alpha_multiplier=1
  stimulus circular_fixation_point "target": color=CTRL_target_col_r,CTRL_target_col_g,CTRL_target_col_b, trigger_width=CTRL_target_size, trigger_watch_x=IO_cursor_x, trigger_watch_y=IO_cursor_y, trigger_flag=CTRL_target_flag, x_size=CTRL_target_size, y_size=CTRL_target_size, x_position=CTRL_target_x, y_position=CTRL_target_y, rotation=0, alpha_multiplier=CTRL_target_alpha
  stimulus advstimulus "arc": trigger_width=CTRL_arc_size, trigger_watch_x=CTRL_target_x, trigger_watch_y=CTRL_target_y, trigger_flag=CTRL_arc_flag, x_size=CTRL_arc_size, y_size=CTRL_arc_size, x_position=0, y_position=0, shape=format("circle %d", (integer)CTRL_arc_width), color=CTRL_arc_col_r,CTRL_arc_col_g,CTRL_arc_col_b, rotation=-(IO_joystickDirection-90 - CTRL_arc_width/2), alpha_multiplier=CTRL_arc_alpha, version=1, autoplay=YES
  stimulus circular_fixation_point "arcMask": color=0.5,0.5,0.5, trigger_width=CTRL_arcMask_size, trigger_watch_x=IO_cursor_x, trigger_watch_y=IO_cursor_x, trigger_flag=CTRL_arcMask_flag, x_size=CTRL_arcMask_size, y_size=CTRL_arcMask_size, x_position=0, y_position=0, rotation=0, alpha_multiplier=1
  stimulus text "feedback_accuracy": text=format("Accuracy: %d", INFO_cursor_accuracyDisplay), font_name=Arial, font_size=20, text_alignment=left, color=1,1,1, x_size=10, y_size=10, x_position=-10, y_position=3, rotation=0, alpha_multiplier=1
  stimulus text "feedback_distance": text=format("Dist2Center: %d", IO_cursor_distance2center), font_name=Arial, font_size=20, text_alignment=left, color=1,1,1, x_size=10, y_size=10, x_position=-10, y_position=4, rotation=0, alpha_multiplier=1
  stimulus text "feedback_reward": text=format("Reward: %d EUR", (round((IO_cursor_distance2center/RDP_radius)*100)/1000)), font_name=Arial, font_size=20, text_alignment=left, color=1,0,0, x_size=10, y_size=10, x_position=1, y_position=1, rotation=0, alpha_multiplier=1
  stimulus circular_fixation_point "target1": color=1,0,0, trigger_width=CTRL_target_size +CTRL_target_collision_area, trigger_watch_x=IO_cursor_x, trigger_watch_y=IO_cursor_y, trigger_flag=CTRL_target_flag1, x_size=CTRL_target_size, y_size=CTRL_target_size, x_position=0, y_position=9, rotation=0, alpha_multiplier=0
  stimulus circular_fixation_point "target2": color=1,0,0, trigger_width=CTRL_target_size + CTRL_target_collision_area, trigger_watch_x=IO_cursor_x, trigger_watch_y=IO_cursor_y, trigger_flag=CTRL_target_flag2, x_size=CTRL_target_size, y_size=CTRL_target_size, x_position=9, y_position=0, rotation=0, alpha_multiplier=0
  stimulus circular_fixation_point "target3": color=1,0,0, trigger_width=CTRL_target_size + CTRL_target_collision_area, trigger_watch_x=IO_cursor_x, trigger_watch_y=IO_cursor_y, trigger_flag=CTRL_target_flag3, x_size=CTRL_target_size, y_size=CTRL_target_size, x_position=0, y_position=-9, rotation=0, alpha_multiplier=0
  stimulus circular_fixation_point "target4": color=1,0,0, trigger_width=CTRL_target_size + CTRL_target_collision_area, trigger_watch_x=IO_cursor_x, trigger_watch_y=IO_cursor_y, trigger_flag=CTRL_target_flag4, x_size=CTRL_target_size, y_size=CTRL_target_size, x_position=-9, y_position=0, rotation=0, alpha_multiplier=0
  stimulus image_file "target_coin1": path=./coin.png, x_size=2, y_size=2, x_position=0, y_position=9, rotation=0, alpha_multiplier=1, deferred=NO
  stimulus image_file "target_coin2": path=./coin.png, x_size=2, y_size=2, x_position=9, y_position=0, rotation=0, alpha_multiplier=1, deferred=NO
  stimulus image_file "target_coin3": path=./coin.png, x_size=2, y_size=2, x_position=0, y_position=-9, rotation=0, alpha_multiplier=1, deferred=NO
  stimulus image_file "target_coin4": path=./coin.png, x_size=2, y_size=2, x_position=-9, y_position=0, rotation=0, alpha_multiplier=1, deferred=NO
filters "Filters"
optimizers "Optimizers"
  filter Staircase_Optimizer "SC_noise": input=SC_in, output=SC_out, steps_csv=SC_steps, index=SC_index_starting, leftCriterion=SC_left_rate, version=INFO_task, rightCriterion=SC_right_rate
resources "Resources"
experiment "New Experiment"
  protocol "Pre-test SNR": nsamples=1, sampling_method=cycles, selection=sequential
    action queue_stimulus "Queue background": stimulus=Background
    action start_device_IO "Start mIO": device=mIO
    action live_queue_stimulus "Live Queue cursor": stimulus=cursor
    action update_stimulus_display "Update Display"
    action assignment "Set Staircase Starting point": variable=SC_index_starting, value=1
    trial "Main Task System": nsamples=1, sampling_method=cycles, selection=sequential
      task_system "LOOP"
        task_system_state "Wait for joystick"
          action queue_stimulus "Queue start_area": stimulus=start_area
          action assignment "Update Cursor Position X": variable=IO_cursor_x, value=-CTRL_Xmax * IO_joystickX_calib
          action assignment "Update Cursor Position Y": variable=IO_cursor_y, value=CTRL_Ymax * IO_joystickY_calib
          action update_stimulus_display "Update Display"
          transition conditional "If Cursor inside start area, go to New Trial": condition=IO_start_area_flag, target=New Trial
          transition conditional "If Cursor inside start area, go to Wait For Joystick": condition=IO_start_area_flag == 0, target=Wait for joystick
        task_system_state "New Trial"
          action if "Set Matlab variables": condition=1
            action assignment "set ML sync": variable=ML_sync, value=1
            action assignment "set ML trial start": variable=ML_trialStart, value=ML_trialStart + 1
            action assignment "Log task name": variable=INFO_task, value="pre-test-SNR"
          action live_queue_stimulus "Live Queue RDP": stimulus=RDP
          action assignment "Select RDP direction[90,180,270,360]": variable=RDP_direction, value=disc_rand(0,3)*90
          action assignment "Set RDP coherence to SC_out": variable=RDP_coherence, value=SC_out
          action assignment "Set Show Target to 0": variable=CTRL_target_ON, value=0
          action update_stimulus_display "Update Display"
          action start_timer "Start Timer (TargetTimer)": timer=TargetTimer, duration=CTRL_PreSNR_TargetDuration, duration_units=ms
          action report "Report trial start": message====== TRIAL $ML_trialStart STARTS=====
          transition direct "Go to update stimulus": target=Update Stimulus
        task_system_state "Update Stimulus"
          action start_timer "Start Timer (FrameTimer)": timer=FrameTimer, duration=16, duration_units=ms
          action assignment "Update Cursor Position X": variable=IO_cursor_x, value=-CTRL_Xmax * IO_joystickX_calib
          action assignment "Update Cursor Position Y": variable=IO_cursor_y, value=CTRL_Ymax * IO_joystickY_calib
          transition timer_expired "If FrameTimer Expired, Transition to Update Stimulus": target=Update Stimulus, timer=FrameTimer
          transition conditional "if TargetTimer Expired go to Show Target": condition=timer_expired(TargetTimer), target=Show Target
          transition conditional "if start_area left go to false alarm": condition=IO_start_area_flag == 0, target=False Alarm
        task_system_state "Show Target"
          action report "Report": message=-- Show Targets
          action live_queue_stimulus "Live Queue cursor": stimulus=cursor
          action assignment "Set Show Target to 1": variable=CTRL_target_ON, value=1
          action dequeue_stimulus "Dequeue start_area": stimulus=start_area
          action dequeue_stimulus "Dequeue RDP": stimulus=RDP
          action if "Queue Targets": condition=1
            action live_queue_stimulus "Live Queue Target 1": stimulus=target1
            action live_queue_stimulus "Live Queue Target 2": stimulus=target2
            action live_queue_stimulus "Live Queue Target 3": stimulus=target3
            action live_queue_stimulus "Live Queue Target 4": stimulus=target4
            action live_queue_stimulus "Live Queue Target_coin1": stimulus=target_coin1
            action live_queue_stimulus "Live Queue Target_coin 2": stimulus=target_coin2
            action live_queue_stimulus "Live Queue Target_coin 3": stimulus=target_coin3
            action live_queue_stimulus "Live Queue Target_coin 4": stimulus=target_coin4
          action update_stimulus_display "Update Display"
          action start_timer "Start ResponseTimer": timer=ResponseTimer, duration=CTRL_PreSNR_ResponseWindow, duration_units=ms
          transition direct "Always Go to ...": target=Response Window
        task_system_state "Response Window"
          action start_timer "Start Timer (FrameTimer)": timer=RW_FrameTimer, duration=16, duration_units=ms
          action assignment "Update Cursor Position X": variable=IO_cursor_x, value=-CTRL_Xmax * IO_joystickX_calib
          action assignment "Update Cursor Position Y": variable=IO_cursor_y, value=CTRL_Ymax * IO_joystickY_calib
          action update_stimulus_display "Update Display"
          transition conditional "If correct target hit": condition=(CTRL_target_flag1 #AND RDP_direction ==0) #OR (CTRL_target_flag2 #AND RDP_direction ==90) #OR (CTRL_target_flag3 #AND RDP_direction ==180) #OR (CTRL_target_flag4 #AND RDP_direction ==270), target=Hit
          transition conditional "If wrong target, go to error": condition=(CTRL_target_flag1 #AND RDP_direction !=0) #OR (CTRL_target_flag2 #AND RDP_direction !=90) #OR (CTRL_target_flag3 #AND RDP_direction !=180) #OR (CTRL_target_flag4 #AND RDP_direction !=270), target=Error
          transition timer_expired "If FrameTimer Expired, Transition to Response Window": target=Response Window, timer=RW_FrameTimer
          transition timer_expired "If ResponseTimer Expired, Transition to Miss": target=Miss, timer=ResponseTimer
        task_system_state "Hit"
          action report "Report Hit": message=++ outcome: Hit
          action assignment "Set Trial outcome to hit": variable=TRIAL_outcome, value="hit"
          action assignment "Set SC_in": variable=SC_in, value=1
          transition direct "Always Go to end trial": target=End Trial
        task_system_state "Miss"
          action report "Report Miss": message=++ outcome: Miss
          action assignment "Set Trial outcome to miss": variable=TRIAL_outcome, value="miss"
          action assignment "Set SC_in 0": variable=SC_in, value=0
          transition direct "Always Go to end trial": target=End Trial
        task_system_state "Error"
          action report "Report Error": message=++ outcome: Error
          action assignment "Set Trial outcome to error": variable=TRIAL_outcome, value="error"
          action assignment "Set SC_in 0": variable=SC_in, value=0
          transition direct "Always Go to end trial": target=End Trial
        task_system_state "False Alarm"
          action report "Report False alarm": message=++ outcome: False alarm
          action assignment "Set Trial outcome to false alarm": variable=TRIAL_outcome, value="false alarm"
          transition direct "Always Go to end trial": target=End Trial
        task_system_state "End Trial"
          action if "Dequeue Targets": condition=1
            action dequeue_stimulus "Dequeue Target 1": stimulus=target1
            action dequeue_stimulus "Dequeue Target 2": stimulus=target2
            action dequeue_stimulus "Dequeue Target 3": stimulus=target3
            action dequeue_stimulus "Dequeue Target 4": stimulus=target4
            action dequeue_stimulus "Dequeue Target_coin 1": stimulus=target_coin1
            action dequeue_stimulus "Dequeue Target_coin 2": stimulus=target_coin2
            action dequeue_stimulus "Dequeue Target_coin 3": stimulus=target_coin3
            action dequeue_stimulus "Dequeue Target_coin 4": stimulus=target_coin4
            action dequeue_stimulus "Dequeue Start Area": stimulus=start_area
            action dequeue_stimulus "Dequeue RDP": stimulus=RDP
            action assignment "Reset Target 1 Flag": variable=CTRL_target_flag1, value=0
            action assignment "Reset Target 2 Flag": variable=CTRL_target_flag2, value=0
            action assignment "Reset Target 3 Flag": variable=CTRL_target_flag3, value=0
            action assignment "Reset Target 4 Flag": variable=CTRL_target_flag4, value=0
          action update_stimulus_display "Update Display"
          action if "Set Matlab variables": condition=1
            action assignment "set ML sync": variable=ML_sync, value=0
            action assignment "set ML trial end": variable=ML_trialEnd, value=ML_trialStart
          action report "Report end of cycle": message=END OF TRIAL $ML_trialEnd **********************
          transition direct "Always Go to Wait for joystick": target=Wait for joystick
  protocol "CPR_steady_Training": nsamples=1, sampling_method=cycles, selection=sequential
    action start_device_IO "Start Joystick": device=mIO
    action live_queue_stimulus "Queue Background": stimulus=Background
    action live_queue_stimulus "Live Queue Cursor": stimulus=cursor
    action live_queue_stimulus "Live Queue Feedback Accuray": stimulus=feedback_accuracy
    action live_queue_stimulus "Live Queue Feedback Distance": stimulus=feedback_distance
    action update_stimulus_display "Update Display"
    action if "Paradigm settings": condition=1
      action assignment "Set CTRL_RequiredHitNo": variable=CTRL_RequiredHitNo, value=10
      action assignment "Set CTRL_snr_min": variable=CTRL_snr_min, value=.9
      action assignment "Set CTRL_snr_max": variable=CTRL_snr_min, value=.95
      action assignment "Set CTRL_target_duration": variable=CTRL_target_duration, value=3000
    action start_timer "Initialize ColorChangeTimer": timer=ColorChangeTimer, duration=0.0, duration_units=ms
    trial "Trial structure": nsamples=1, sampling_method=cycles, selection=sequential
      task_system "LOOP"
        task_system_state "Wait for Joystick"
          action start_timer "Start FrameTimer": timer=FrameTimer, duration=CTRL_frameTimer_duration, duration_units=ms
          action if "Convert cursor position": condition=1
            action assignment "... X": variable=IO_cursor_x, value=-(CTRL_Xmax * IO_joystickX_calib)
            action assignment "... Y": variable=IO_cursor_y, value=CTRL_Ymax * IO_joystickY_calib
          action queue_stimulus "Queue start_area": stimulus=start_area
          action update_stimulus_display "Update Display"
          transition conditional "If Cursor inside start area, go to New Trial": condition=IO_start_area_flag == true, target=New Trial
          transition timer_expired "If FrameTimer Expired, Transition to Update Stimuli": target=Wait for Joystick, timer=FrameTimer
        task_system_state "New Trial"
          action if "Set Matlab variables": condition=1
            action assignment "set ML sync": variable=ML_sync, value=1
            action assignment "set ML trial start": variable=ML_trialStart, value=ML_trialStart + 1
            action assignment "Log task name": variable=INFO_task, value="Steady_Flip"
          action if "Set RDP parameters": condition=1
            action assignment "Set RDP direction": variable=RDP_direction, value=disc_rand(0,359)
            action assignment "Set RDP Speed to 4": variable=RDP_speed, value=4
            action assignment "Set RDP coherence": variable=RDP_coherence, value=rand(CTRL_snr_min, CTRL_snr_max)
          action update_stimulus_display "Update Display"
          action assignment "Draw CTRL_trial_duration": variable=CTRL_trial_duration, value=disc_rand(CTRL_trial_min, CTRL_trial_max)
          action start_timer "Start TrialTimer": timer=TrialTimer, duration=CTRL_trial_duration, duration_units=ms
          action report "Report trial start": message====== TRIAL $ML_trialStart STARTS =====
          transition direct "Always Go to Show Stimuli": target=Show Stimuli
        task_system_state "Show Stimuli"
          action if "Live Queue Stimuli": condition=1
            action live_queue_stimulus "Live Queue Arc": stimulus=arc
            action live_queue_stimulus "Live Queue ArcMask": stimulus=arcMask
            action live_queue_stimulus "Live Queue RDP": stimulus=RDP
            action live_queue_stimulus "Live Queue Start Area": stimulus=start_area
            action live_queue_stimulus "Live Queue Cursor": stimulus=cursor
            action update_stimulus_display "Update Stimulus Display"
          transition direct "Go to Set up Target": target=Set up Target
        task_system_state "Set up Target"
          action assignment "Draw CTRL_Time2Target": variable=CTRL_Time2Target, value=1500 * disc_rand(1,6)
          action start_timer "Start TargetTimer": timer=TargetTimer, duration=CTRL_Time2Target, duration_units=ms
          transition conditional "If required number of targets collected, end paradigm": condition=INFO_HitCounter >= CTRL_RequiredHitNo, target=End Trial
          transition direct "Always Go to Set up steady state": target=Set up steady state
        task_system_state "Set up steady state"
          action assignment "Set Steady State Duration": variable=CTRL_SteadyStateDuration, value=disc_rand(1000,3000)
          action start_timer "Start SteadyStateDurationTimer": timer=SteadyStateDurationTimer, duration=CTRL_SteadyStateDuration, duration_units=ms
          action start_timer "Start SteadyStateMinDurationTimer": timer=SteadyStateMinDurationTimer, duration=CTRL_steadyState_min, duration_units=ms
          action assignment "SteadyState start timestamp": variable=TMP_steady_ts, value=now()
          transition direct "Always Go to Update Stimuli": target=Update Stimuli
        task_system_state "Update Stimuli"
          action start_timer "Start FrameTimer": timer=FrameTimer, duration=CTRL_frameTimer_duration, duration_units=ms
          action if "IF ColorChangeTimer expired...": condition=timer_expired(ColorChangeTimer)
            action assignment "start_area color to black": variable=CTRL_start_area_col_g, value=0
            action dequeue_stimulus "Dequeue reward feedback": stimulus=feedback_reward
          action if "Convert cursor position": condition=1
            action assignment "... X": variable=IO_cursor_x, value=-(CTRL_Xmax * IO_joystickX_calib)
            action assignment "... Y": variable=IO_cursor_y, value=CTRL_Ymax * IO_joystickY_calib
          action if "Update trigger boundaries": condition=1
            action assignment "Update CTRL_arc_trigger_min": variable=CTRL_arc_trigger_min, value=(((TMP_stimDir - (CTRL_arc_width/2) + 360) % 360) + ((180-TMP_stimDir) + 360)) % 360
            action assignment "Update CTRL_arc_trigger_max": variable=CTRL_arc_trigger_max, value=(((TMP_stimDir + (CTRL_arc_width/2) + 360) % 360) + ((180-TMP_stimDir) + 360)) % 360
          action if "Calculate Accurary": condition=1
            action assignment "Assign TMP_RDPdir": variable=TMP_RDPdir, value=RDP_direction
            action if "If TMP_RDPdir between 0:359 ...": condition=TMP_RDPdir >= 0 && TMP_RDPdir < 359
              action assignment "Set TMP_stimDir": variable=TMP_stimDir, value=TMP_RDPdir
            action if "If TMP_RDPdir > 359...": condition=TMP_RDPdir > 359
              action assignment "Correct TMP_RDPdir value to match angle 0:359": variable=TMP_stimDir, value=TMP_RDPdir - 359
            action if "If TMP_RDPdir < 0...": condition=TMP_RDPdir < 0
              action assignment "Correct TMP_RDPdir value to match angle 0:359": variable=TMP_stimDir, value=TMP_RDPdir + 359
            action assignment "Update response accuracy": variable=IO_cursor_accuracy, value=abs(1 - abs(TMP_stimDir - (IO_joystickDirection - 90)) / 180)
            action assignment "Round response accuracy for display": variable=INFO_cursor_accuracyDisplay, value=round(IO_cursor_accuracy * 100) / 100
          action if "Calculate cursor2target distance": condition=1
            action assignment "Normalise joystick direction": variable=TMP_normJoyDir, value=(((IO_joystickDirection-90) + (180-TMP_stimDir) + 360) % 360) 
            action assignment "Normalise RDP direction": variable=TMP_normStimDir, value=(((TMP_stimDir + 360) % 360) + ((180-TMP_stimDir) + 360)) % 360
            action assignment "Difference Joystick - Cursor": variable=TMP_joyDeviation, value=abs(TMP_normJoyDir - TMP_normStimDir)
            action assignment "Calculate distance from center": variable=IO_cursor_distance2center, value=sqrt(pow(IO_cursor_y,2) + pow(IO_cursor_x,2))
          action if "Set arc width": condition=1
            action if "IF IO_cursor_distance2center <= RDP_radius": condition=IO_cursor_distance2center <= RDP_radius
              action assignment "Set to IO_cursor_distance2center": variable=TMP_scalingFactor, value=IO_cursor_distance2center
            action if "IF IO_cursor_distance2center > RDP_radius": condition=IO_cursor_distance2center > RDP_radius
              action assignment "Set to RDP_radius": variable=TMP_scalingFactor, value=RDP_radius
            action assignment "Calculate arc width": variable=CTRL_arc_width, value=180 * (abs(TMP_scalingFactor - RDP_radius)/RDP_radius)
          action if "Set luminance": condition=1
            action assignment "Set arc luminance": variable=CTRL_arc_alpha, value=IO_cursor_distance2center / RDP_radius
            action assignment "Set target luminance": variable=CTRL_target_alpha, value=IO_cursor_distance2center / RDP_radius
          action update_stimulus_display "Update Stimulus Display"
          transition conditional "If outside RDP patch, abort trial": condition=IO_cursor_distance2center > RDP_radius, target=Abort
          transition conditional "If TargetTimer expired, present target": condition=timer_expired(TargetTimer) && timer_expired(SteadyStateMinDurationTimer), target=Target presentation
          transition timer_expired "If SteadyStateDurationTimer Expired, Transition to Direction switch": target=Direction switch, timer=SteadyStateDurationTimer
          transition timer_expired "If TrialTimer Expired, Transition to End trial": target=End Trial, timer=TrialTimer
          transition timer_expired "If FrameTimer Expired, Transition to Update Stimuli": target=Update Stimuli, timer=FrameTimer
        task_system_state "Direction switch"
          action assignment "Roll TMP_dice": variable=TMP_dice, value=disc_rand(0,1)
          action if "If TMP_dice == 1": condition=TMP_dice == 1
            action assignment "Assign new RDP_direction [+]": variable=RDP_direction, value=RDP_direction + CTRL_directionChange_list[disc_rand(0,3)]
          action if "If TMP_dice == 0": condition=TMP_dice == 0
            action assignment "Assign new RDP_direction [-]": variable=RDP_direction, value=RDP_direction - CTRL_directionChange_list[disc_rand(0,3)]
          transition direct "Always Go to Set up steady state": target=Set up steady state
        task_system_state "Target presentation"
          action if "Determine target coordinates": condition=1
            action assignment "Calculate CTRL_target_x": variable=CTRL_target_x, value=sin((RDP_direction)*(pi/180))*(RDP_radius + (CTRL_target_size/2))
            action assignment "Calculate CTRL_target_y": variable=CTRL_target_y, value=cos((RDP_direction)*(pi/180))*(RDP_radius+ (CTRL_target_size/2))
          action live_queue_stimulus "Live Queue target": stimulus=target
          action assignment "Set target indicator to 1": variable=CTRL_target_ON, value=1
          action start_timer "Start TargetDurationTimer": timer=TargetDurationTimer, duration=CTRL_target_duration, duration_units=ms
          action report "Report target": message=--- SHOW TARGET ---
          transition direct "Always Go to Check if target detected": target=Check if target detected
        task_system_state "Check if target detected"
          action start_timer "Start FrameTimer": timer=FrameTimer, duration=CTRL_frameTimer_duration, duration_units=ms
          action if "IF start_area still green...": condition=CTRL_start_area_col_g == 1
            action assignment "...change color to clack": variable=CTRL_start_area_col_g, value=0
            action dequeue_stimulus "Dequeue reward feedback": stimulus=feedback_reward
          action if "Convert cursor position": condition=1
            action assignment "... X": variable=IO_cursor_x, value=-(CTRL_Xmax * IO_joystickX_calib)
            action assignment "... Y": variable=IO_cursor_y, value=CTRL_Ymax * IO_joystickY_calib
          action if "Update trigger boundaries": condition=1
            action assignment "Update CTRL_arc_trigger_min": variable=CTRL_arc_trigger_min, value=(((TMP_stimDir - (CTRL_arc_width/2) + 360) % 360) + ((180-TMP_stimDir) + 360)) % 360
            action assignment "Update CTRL_arc_trigger_max": variable=CTRL_arc_trigger_max, value=(((TMP_stimDir + (CTRL_arc_width/2) + 360) % 360) + ((180-TMP_stimDir) + 360)) % 360
          action if "Calculate Accurary": condition=1
            action assignment "Assign TMP_RDPdir": variable=TMP_RDPdir, value=RDP_direction
            action if "If TMP_RDPdir between 0:359 ...": condition=TMP_RDPdir >= 0 && TMP_RDPdir < 359
              action assignment "Set TMP_stimDir": variable=TMP_stimDir, value=TMP_RDPdir
            action if "If TMP_RDPdir > 359...": condition=TMP_RDPdir > 359
              action assignment "Correct TMP_RDPdir value to match angle 0:359": variable=TMP_stimDir, value=TMP_RDPdir - 359
            action if "If TMP_RDPdir < 0...": condition=TMP_RDPdir < 0
              action assignment "Correct TMP_RDPdir value to match angle 0:359": variable=TMP_stimDir, value=TMP_RDPdir + 359
            action assignment "Update response accuracy": variable=IO_cursor_accuracy, value=abs(1 - abs(TMP_stimDir - (IO_joystickDirection - 90)) / 180)
            action assignment "Round response accuracy for display": variable=INFO_cursor_accuracyDisplay, value=round(IO_cursor_accuracy * 100) / 100
          action if "Calculate cursor2target distance": condition=1
            action assignment "Normalise joystick direction": variable=TMP_normJoyDir, value=(((IO_joystickDirection-90) + (180-TMP_stimDir) + 360) % 360) 
            action assignment "Normalise RDP direction": variable=TMP_normStimDir, value=(((TMP_stimDir + 360) % 360) + ((180-TMP_stimDir) + 360)) % 360
            action assignment "Difference Joystick - Cursor": variable=TMP_joyDeviation, value=abs(TMP_normJoyDir - TMP_normStimDir)
            action assignment "Calculate distance from center": variable=IO_cursor_distance2center, value=sqrt(pow(IO_cursor_y,2) + pow(IO_cursor_x,2))
          action if "Set arc width": condition=1
            action if "IF IO_cursor_distance2center <= RDP_radius": condition=IO_cursor_distance2center <= RDP_radius
              action assignment "Set to IO_cursor_distance2center": variable=TMP_scalingFactor, value=IO_cursor_distance2center
            action if "IF IO_cursor_distance2center > RDP_radius": condition=IO_cursor_distance2center > RDP_radius
              action assignment "Set to RDP_radius": variable=TMP_scalingFactor, value=RDP_radius
            action assignment "Calculate arc width": variable=CTRL_arc_width, value=180 * (abs(TMP_scalingFactor - RDP_radius)/RDP_radius)
          action if "Set luminance": condition=1
            action assignment "Set arc luminance": variable=CTRL_arc_alpha, value=IO_cursor_distance2center / RDP_radius
            action assignment "Set target luminance": variable=CTRL_target_alpha, value=IO_cursor_distance2center / RDP_radius
          action if "Check if arc triggered": condition=1
            action assignment "Define flag": variable=CTRL_arc_flag, value=(TMP_normJoyDir >= CTRL_arc_trigger_min) && (TMP_normJoyDir <=CTRL_arc_trigger_max)
            action if "IF arc triggered...": condition=CTRL_arc_flag
              action assignment "Make target visible: CTRL_target_col_r": variable=CTRL_target_col_r, value=0
              action assignment "Make target visible: CTRL_target_col_g": variable=CTRL_target_col_g, value=0
              action assignment "Make target visible: CTRL_target_col_b": variable=CTRL_target_col_b, value=0
            action if "IF arc not triggered...": condition=CTRL_arc_flag == false
              action assignment "Make target invisible: CTRL_target_col_r": variable=CTRL_target_col_r, value=0.5
              action assignment "Make target invisible: CTRL_target_col_g": variable=CTRL_target_col_g, value=0.5
              action assignment "Make target invisible: CTRL_target_col_b": variable=CTRL_target_col_b, value=0.5
          action assignment "Update TMP_ExtraCash": variable=TMP_ExtraCash, value=round((IO_cursor_distance2center/RDP_radius)*100)/1000
          action update_stimulus_display "Update Stimulus Display"
          action start_timer "Start HoldDurationTimer": timer=HoldDurationTimer, duration=CTRL_HoldTarget_ms, duration_units=ms
          transition conditional "If outside RDP patch, abort trial": condition=IO_cursor_distance2center > RDP_radius, target=Abort
          transition conditional "If target overlapping with arc go to Hold target": condition=CTRL_arc_flag, target=Hold target
          transition timer_expired "If TargetDurationTimer Expired, Transition to Target presentation": target=Miss, timer=TargetDurationTimer
          transition timer_expired "If FrameTimer Expired, Transition to Update Stimuli": target=Check if target detected, timer=FrameTimer
        task_system_state "Hold target"
          action start_timer "Start FrameTimer": timer=FrameTimer, duration=CTRL_frameTimer_duration, duration_units=ms
          action if "Convert cursor position": condition=1
            action assignment "... X": variable=IO_cursor_x, value=-(CTRL_Xmax * IO_joystickX_calib)
            action assignment "... Y": variable=IO_cursor_y, value=CTRL_Ymax * IO_joystickY_calib
          action if "Update trigger boundaries": condition=1
            action assignment "Update CTRL_arc_trigger_min": variable=CTRL_arc_trigger_min, value=(((TMP_stimDir - (CTRL_arc_width/2) + 360) % 360) + ((180-TMP_stimDir) + 360)) % 360
            action assignment "Update CTRL_arc_trigger_max": variable=CTRL_arc_trigger_max, value=(((TMP_stimDir + (CTRL_arc_width/2) + 360) % 360) + ((180-TMP_stimDir) + 360)) % 360
          action if "Calculate Accurary": condition=1
            action assignment "Assign TMP_RDPdir": variable=TMP_RDPdir, value=RDP_direction
            action if "If TMP_RDPdir between 0:359 ...": condition=TMP_RDPdir >= 0 && TMP_RDPdir < 359
              action assignment "Set TMP_stimDir": variable=TMP_stimDir, value=TMP_RDPdir
            action if "If TMP_RDPdir > 359...": condition=TMP_RDPdir > 359
              action assignment "Correct TMP_RDPdir value to match angle 0:359": variable=TMP_stimDir, value=TMP_RDPdir - 359
            action if "If TMP_RDPdir < 0...": condition=TMP_RDPdir < 0
              action assignment "Correct TMP_RDPdir value to match angle 0:359": variable=TMP_stimDir, value=TMP_RDPdir + 359
            action assignment "Update response accuracy": variable=IO_cursor_accuracy, value=abs(1 - abs(TMP_stimDir - (IO_joystickDirection - 90)) / 180)
            action assignment "Round response accuracy for display": variable=INFO_cursor_accuracyDisplay, value=round(IO_cursor_accuracy * 100) / 100
          action if "Calculate cursor2target distance": condition=1
            action assignment "Normalise joystick direction": variable=TMP_normJoyDir, value=(((IO_joystickDirection-90) + (180-TMP_stimDir) + 360) % 360) 
            action assignment "Normalise RDP direction": variable=TMP_normStimDir, value=(((TMP_stimDir + 360) % 360) + ((180-TMP_stimDir) + 360)) % 360
            action assignment "Difference Joystick - Cursor": variable=TMP_joyDeviation, value=abs(TMP_normJoyDir - TMP_normStimDir)
            action assignment "Calculate distance from center": variable=IO_cursor_distance2center, value=sqrt(pow(IO_cursor_y,2) + pow(IO_cursor_x,2))
          action if "Check if arc triggered": condition=1
            action assignment "Define flag": variable=CTRL_arc_flag, value=(TMP_normJoyDir >= CTRL_arc_trigger_min) && (TMP_normJoyDir <=CTRL_arc_trigger_max)
            action if "IF arc triggered...": condition=CTRL_arc_flag
              action assignment "Make target visible: CTRL_target_col_r": variable=CTRL_target_col_r, value=0
              action assignment "Make target visible: CTRL_target_col_g": variable=CTRL_target_col_g, value=0
              action assignment "Make target visible: CTRL_target_col_b": variable=CTRL_target_col_b, value=0
            action if "IF arc not triggered...": condition=CTRL_arc_flag == false
              action assignment "Make target invisible: CTRL_target_col_r": variable=CTRL_target_col_r, value=0.5
              action assignment "Make target invisible: CTRL_target_col_g": variable=CTRL_target_col_g, value=0.5
              action assignment "Make target invisible: CTRL_target_col_b": variable=CTRL_target_col_b, value=0.5
          action if "Reduce target luminance": condition=1
            action assignment "Set target luminance": variable=CTRL_target_alpha, value=CTRL_target_alpha - (CTRL_target_alpha/100)
            action if "If CTRL_target_alpha < 0": condition=CTRL_target_alpha < 0
              action assignment "Set target luminance to zero": variable=CTRL_target_alpha, value=0
          action update_stimulus_display "Update Stimulus Display"
          transition conditional "If outside RDP patch, abort trial": condition=IO_cursor_distance2center > RDP_radius, target=Abort
          transition conditional "If target overlapping with arc -> Hit": condition=CTRL_arc_flag && timer_expired(HoldDurationTimer), target=Hit
          transition conditional "If target lost -> Check if target detected": condition=CTRL_arc_flag == false, target=Check if target detected
          transition timer_expired "If FrameTimer Expired, Transition to Hold target": target=Hold target, timer=FrameTimer
        task_system_state "Miss"
          action dequeue_stimulus "Dequeue target": stimulus=target
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Set target indicator to 0": variable=CTRL_target_ON, value=0
          action assignment "TRIAL_outcome -> Miss": variable=TRIAL_outcome, value="miss"
          action report "Report trial outcome": message=--- OUTCOME: Miss ---
          transition direct "Always Go to Set up target": target=Set up Target
        task_system_state "Abort"
          action dequeue_stimulus "Dequeue target": stimulus=target
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Set target indicator to 0": variable=CTRL_target_ON, value=0
          action assignment "TRIAL_outcome -> Abort": variable=TRIAL_outcome, value="abort"
          action report "Report trial outcome": message=--- OUTCOME: Abort ---
          transition direct "Always Go to Set up target": target=End Trial
        task_system_state "Hit"
          action play_sound "Play Sound": sound=Reward
          action dequeue_stimulus "Dequeue target": stimulus=target
          action queue_stimulus "Queue reward feedback": stimulus=feedback_reward
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Set target indicator to 0": variable=CTRL_target_ON, value=0
          action assignment "TRIAL_outcome -> Hit": variable=TRIAL_outcome, value="hit"
          action assignment "Add to INFO_HitCounter": variable=INFO_HitCounter, value=INFO_HitCounter + 1
          action assignment "Add to INFO_ExtraCash": variable=INFO_ExtraCash, value=INFO_ExtraCash + TMP_ExtraCash
          action report "Report trial outcome": message=--- OUTCOME: Hit ---
          action assignment "Change start_area color to green": variable=CTRL_start_area_col_g, value=1
          action start_timer "Start ColorChangeTimer": timer=ColorChangeTimer, duration=CTRL_start_area_colorChange_ms, duration_units=ms
          transition direct "Always Go to Set up target": target=Set up Target
        task_system_state "End Trial"
          action if "Dequeue Stimuli": condition=1
            action dequeue_stimulus "Dequeue target": stimulus=target
            action dequeue_stimulus "Dequeue RDP": stimulus=RDP
            action dequeue_stimulus "Dequeue start_area": stimulus=start_area
            action dequeue_stimulus "Dequeue arc": stimulus=arc
            action dequeue_stimulus "Dequeue arcMask": stimulus=arcMask
            action dequeue_stimulus "Dequeue feedback_reward": stimulus=feedback_reward
          action assignment "start_area color to black": variable=CTRL_start_area_col_g, value=0
          action update_stimulus_display "Update Stimulus Display"
          action if "Set Matlab variables": condition=1
            action assignment "set ML sync": variable=ML_sync, value=0
            action assignment "set ML trial start": variable=ML_trialEnd, value=ML_trialEnd + 1
          action report "Report trial end": message====== TRIAL $ML_trialEnd ENDS =====
          action start_timer "Start ITI_Timer": timer=ITI_Timer, duration=CTRL_ITI_ms, duration_units=ms
          transition direct "Always Go to ITI": target=ITI
        task_system_state "ITI"
          action start_timer "Start FrameTimer": timer=FrameTimer, duration=CTRL_frameTimer_duration, duration_units=ms
          action if "Convert cursor position": condition=1
            action assignment "... X": variable=IO_cursor_x, value=-(CTRL_Xmax * IO_joystickX_calib)
            action assignment "... Y": variable=IO_cursor_y, value=CTRL_Ymax * IO_joystickY_calib
          transition conditional "If required number of targets collected, end paradigm": condition=INFO_HitCounter >= CTRL_RequiredHitNo && timer_expired(ITI_Timer), target=End paradigm
          transition timer_expired "If ITI_Timer Expired, Transition to ...": target=Wait for Joystick, timer=ITI_Timer
          transition timer_expired "If FrameTimer Expired, Transition to ITI": target=ITI, timer=FrameTimer
        task_system_state "End paradigm"
          action report "Report": message===== $INFO_HitCounter COINS COLLECTED ====
          action report "Report": message===== ENDING PARADIGM ====
          transition yield "Exit Task System..."
  protocol "CPR_steady": nsamples=1, sampling_method=cycles, selection=sequential
    action start_device_IO "Start Joystick": device=mIO
    action live_queue_stimulus "Queue Background": stimulus=Background
    action live_queue_stimulus "Live Queue Cursor": stimulus=cursor
    action live_queue_stimulus "Live Queue Feedback Accuray": stimulus=feedback_accuracy
    action live_queue_stimulus "Live Queue Feedback Distance": stimulus=feedback_distance
    action update_stimulus_display "Update Display"
    action if "Paradigm settings": condition=1
      action assignment "Set CTRL_RequiredHitNo": variable=CTRL_RequiredHitNo, value=100
      action assignment "Set CTRL_snr_min": variable=CTRL_snr_min, value=.25
      action assignment "Set CTRL_snr_max": variable=CTRL_snr_min, value=.3
      action assignment "Set CTRL_target_duration": variable=CTRL_target_duration, value=1000
    action start_timer "Initialize ColorChangeTimer": timer=ColorChangeTimer, duration=0.0, duration_units=ms
    trial "Trial structure": nsamples=1, sampling_method=cycles, selection=sequential
      task_system "LOOP"
        task_system_state "Wait for Joystick"
          action start_timer "Start FrameTimer": timer=FrameTimer, duration=CTRL_frameTimer_duration, duration_units=ms
          action if "Convert cursor position": condition=1
            action assignment "... X": variable=IO_cursor_x, value=-(CTRL_Xmax * IO_joystickX_calib)
            action assignment "... Y": variable=IO_cursor_y, value=CTRL_Ymax * IO_joystickY_calib
          action queue_stimulus "Queue start_area": stimulus=start_area
          action update_stimulus_display "Update Display"
          transition conditional "If Cursor inside start area, go to New Trial": condition=IO_start_area_flag == true, target=New Trial
          transition timer_expired "If FrameTimer Expired, Transition to Update Stimuli": target=Wait for Joystick, timer=FrameTimer
        task_system_state "New Trial"
          action if "Set Matlab variables": condition=1
            action assignment "set ML sync": variable=ML_sync, value=1
            action assignment "set ML trial start": variable=ML_trialStart, value=ML_trialStart + 1
            action assignment "Log task name": variable=INFO_task, value="Steady_Flip"
          action if "Set RDP parameters": condition=1
            action assignment "Set RDP direction": variable=RDP_direction, value=disc_rand(0,359)
            action assignment "Set RDP Speed to 4": variable=RDP_speed, value=4
            action assignment "Set RDP coherence": variable=RDP_coherence, value=rand(CTRL_snr_min, CTRL_snr_max)
          action update_stimulus_display "Update Display"
          action assignment "Draw CTRL_trial_duration": variable=CTRL_trial_duration, value=disc_rand(CTRL_trial_min, CTRL_trial_max)
          action start_timer "Start TrialTimer": timer=TrialTimer, duration=CTRL_trial_duration, duration_units=ms
          action report "Report trial start": message====== TRIAL $ML_trialStart STARTS =====
          transition direct "Always Go to Show Stimuli": target=Show Stimuli
        task_system_state "Show Stimuli"
          action if "Live Queue Stimuli": condition=1
            action live_queue_stimulus "Live Queue Arc": stimulus=arc
            action live_queue_stimulus "Live Queue ArcMask": stimulus=arcMask
            action live_queue_stimulus "Live Queue RDP": stimulus=RDP
            action live_queue_stimulus "Live Queue Start Area": stimulus=start_area
            action live_queue_stimulus "Live Queue Cursor": stimulus=cursor
            action update_stimulus_display "Update Stimulus Display"
          transition direct "Go to Set up Target": target=Set up Target
        task_system_state "Set up Target"
          action assignment "Draw CTRL_Time2Target": variable=CTRL_Time2Target, value=1500 * disc_rand(1,6)
          action start_timer "Start TargetTimer": timer=TargetTimer, duration=CTRL_Time2Target, duration_units=ms
          transition conditional "If required number of targets collected, end paradigm": condition=INFO_HitCounter >= CTRL_RequiredHitNo, target=End Trial
          transition direct "Always Go to Set up steady state": target=Set up steady state
        task_system_state "Set up steady state"
          action assignment "Set Steady State Duration": variable=CTRL_SteadyStateDuration, value=disc_rand(1000,3000)
          action start_timer "Start SteadyStateDurationTimer": timer=SteadyStateDurationTimer, duration=CTRL_SteadyStateDuration, duration_units=ms
          action start_timer "Start SteadyStateMinDurationTimer": timer=SteadyStateMinDurationTimer, duration=CTRL_steadyState_min, duration_units=ms
          action assignment "SteadyState start timestamp": variable=TMP_steady_ts, value=now()
          transition direct "Always Go to Update Stimuli": target=Update Stimuli
        task_system_state "Update Stimuli"
          action start_timer "Start FrameTimer": timer=FrameTimer, duration=CTRL_frameTimer_duration, duration_units=ms
          action if "IF ColorChangeTimer expired...": condition=timer_expired(ColorChangeTimer)
            action assignment "start_area color to black": variable=CTRL_start_area_col_g, value=0
          action if "Convert cursor position": condition=1
            action assignment "... X": variable=IO_cursor_x, value=-(CTRL_Xmax * IO_joystickX_calib)
            action assignment "... Y": variable=IO_cursor_y, value=CTRL_Ymax * IO_joystickY_calib
          action if "Update trigger boundaries": condition=1
            action assignment "Update CTRL_arc_trigger_min": variable=CTRL_arc_trigger_min, value=(((TMP_stimDir - (CTRL_arc_width/2) + 360) % 360) + ((180-TMP_stimDir) + 360)) % 360
            action assignment "Update CTRL_arc_trigger_max": variable=CTRL_arc_trigger_max, value=(((TMP_stimDir + (CTRL_arc_width/2) + 360) % 360) + ((180-TMP_stimDir) + 360)) % 360
          action if "Calculate Accurary": condition=1
            action assignment "Assign TMP_RDPdir": variable=TMP_RDPdir, value=RDP_direction
            action if "If TMP_RDPdir between 0:359 ...": condition=TMP_RDPdir >= 0 && TMP_RDPdir < 359
              action assignment "Set TMP_stimDir": variable=TMP_stimDir, value=TMP_RDPdir
            action if "If TMP_RDPdir > 359...": condition=TMP_RDPdir > 359
              action assignment "Correct TMP_RDPdir value to match angle 0:359": variable=TMP_stimDir, value=TMP_RDPdir - 359
            action if "If TMP_RDPdir < 0...": condition=TMP_RDPdir < 0
              action assignment "Correct TMP_RDPdir value to match angle 0:359": variable=TMP_stimDir, value=TMP_RDPdir + 359
            action assignment "Update response accuracy": variable=IO_cursor_accuracy, value=abs(1 - abs(TMP_stimDir - (IO_joystickDirection - 90)) / 180)
            action assignment "Round response accuracy for display": variable=INFO_cursor_accuracyDisplay, value=round(IO_cursor_accuracy * 100) / 100
          action if "Calculate cursor2target distance": condition=1
            action assignment "Normalise joystick direction": variable=TMP_normJoyDir, value=(((IO_joystickDirection-90) + (180-TMP_stimDir) + 360) % 360) 
            action assignment "Normalise RDP direction": variable=TMP_normStimDir, value=(((TMP_stimDir + 360) % 360) + ((180-TMP_stimDir) + 360)) % 360
            action assignment "Difference Joystick - Cursor": variable=TMP_joyDeviation, value=abs(TMP_normJoyDir - TMP_normStimDir)
            action assignment "Calculate distance from center": variable=IO_cursor_distance2center, value=sqrt(pow(IO_cursor_y,2) + pow(IO_cursor_x,2))
          action if "Set arc width": condition=1
            action if "IF IO_cursor_distance2center <= RDP_radius": condition=IO_cursor_distance2center <= RDP_radius
              action assignment "Set to IO_cursor_distance2center": variable=TMP_scalingFactor, value=IO_cursor_distance2center
            action if "IF IO_cursor_distance2center > RDP_radius": condition=IO_cursor_distance2center > RDP_radius
              action assignment "Set to RDP_radius": variable=TMP_scalingFactor, value=RDP_radius
            action assignment "Calculate arc width": variable=CTRL_arc_width, value=180 * (abs(TMP_scalingFactor - RDP_radius)/RDP_radius)
          action if "Set luminance": condition=1
            action assignment "Set arc luminance": variable=CTRL_arc_alpha, value=IO_cursor_distance2center / RDP_radius
            action assignment "Set target luminance": variable=CTRL_target_alpha, value=IO_cursor_distance2center / RDP_radius
          action update_stimulus_display "Update Stimulus Display"
          transition conditional "If outside RDP patch, abort trial": condition=IO_cursor_distance2center > RDP_radius, target=Abort
          transition conditional "If TargetTimer expired, present target": condition=timer_expired(TargetTimer) && timer_expired(SteadyStateMinDurationTimer), target=Target presentation
          transition timer_expired "If SteadyStateDurationTimer Expired, Transition to Direction switch": target=Direction switch, timer=SteadyStateDurationTimer
          transition timer_expired "If TrialTimer Expired, Transition to End trial": target=End Trial, timer=TrialTimer
          transition timer_expired "If FrameTimer Expired, Transition to Update Stimuli": target=Update Stimuli, timer=FrameTimer
        task_system_state "Direction switch"
          action assignment "Roll TMP_dice": variable=TMP_dice, value=disc_rand(0,1)
          action if "If TMP_dice == 1": condition=TMP_dice == 1
            action assignment "Assign new RDP_direction [+]": variable=RDP_direction, value=RDP_direction + CTRL_directionChange_list[disc_rand(0,3)]
          action if "If TMP_dice == 0": condition=TMP_dice == 0
            action assignment "Assign new RDP_direction [-]": variable=RDP_direction, value=RDP_direction - CTRL_directionChange_list[disc_rand(0,3)]
          transition direct "Always Go to Set up steady state": target=Set up steady state
        task_system_state "Target presentation"
          action if "Determine target coordinates": condition=1
            action assignment "Calculate CTRL_target_x": variable=CTRL_target_x, value=sin((RDP_direction)*(pi/180))*(RDP_radius + (CTRL_target_size/2))
            action assignment "Calculate CTRL_target_y": variable=CTRL_target_y, value=cos((RDP_direction)*(pi/180))*(RDP_radius+ (CTRL_target_size/2))
          action live_queue_stimulus "Live Queue target": stimulus=target
          action assignment "Set target indicator to 1": variable=CTRL_target_ON, value=1
          action start_timer "Start TargetDurationTimer": timer=TargetDurationTimer, duration=CTRL_target_duration, duration_units=ms
          action report "Report target": message=--- SHOW TARGET ---
          transition direct "Always Go to Check if target detected": target=Check if target detected
        task_system_state "Check if target detected"
          action start_timer "Start FrameTimer": timer=FrameTimer, duration=CTRL_frameTimer_duration, duration_units=ms
          action if "IF start_area still green...": condition=CTRL_start_area_col_g == 1
            action assignment "...change color to clack": variable=CTRL_start_area_col_g, value=0
          action if "Convert cursor position": condition=1
            action assignment "... X": variable=IO_cursor_x, value=-(CTRL_Xmax * IO_joystickX_calib)
            action assignment "... Y": variable=IO_cursor_y, value=CTRL_Ymax * IO_joystickY_calib
          action if "Update trigger boundaries": condition=1
            action assignment "Update CTRL_arc_trigger_min": variable=CTRL_arc_trigger_min, value=(((TMP_stimDir - (CTRL_arc_width/2) + 360) % 360) + ((180-TMP_stimDir) + 360)) % 360
            action assignment "Update CTRL_arc_trigger_max": variable=CTRL_arc_trigger_max, value=(((TMP_stimDir + (CTRL_arc_width/2) + 360) % 360) + ((180-TMP_stimDir) + 360)) % 360
          action if "Calculate Accurary": condition=1
            action assignment "Assign TMP_RDPdir": variable=TMP_RDPdir, value=RDP_direction
            action if "If TMP_RDPdir between 0:359 ...": condition=TMP_RDPdir >= 0 && TMP_RDPdir < 359
              action assignment "Set TMP_stimDir": variable=TMP_stimDir, value=TMP_RDPdir
            action if "If TMP_RDPdir > 359...": condition=TMP_RDPdir > 359
              action assignment "Correct TMP_RDPdir value to match angle 0:359": variable=TMP_stimDir, value=TMP_RDPdir - 359
            action if "If TMP_RDPdir < 0...": condition=TMP_RDPdir < 0
              action assignment "Correct TMP_RDPdir value to match angle 0:359": variable=TMP_stimDir, value=TMP_RDPdir + 359
            action assignment "Update response accuracy": variable=IO_cursor_accuracy, value=abs(1 - abs(TMP_stimDir - (IO_joystickDirection - 90)) / 180)
            action assignment "Round response accuracy for display": variable=INFO_cursor_accuracyDisplay, value=round(IO_cursor_accuracy * 100) / 100
          action if "Calculate cursor2target distance": condition=1
            action assignment "Normalise joystick direction": variable=TMP_normJoyDir, value=(((IO_joystickDirection-90) + (180-TMP_stimDir) + 360) % 360) 
            action assignment "Normalise RDP direction": variable=TMP_normStimDir, value=(((TMP_stimDir + 360) % 360) + ((180-TMP_stimDir) + 360)) % 360
            action assignment "Difference Joystick - Cursor": variable=TMP_joyDeviation, value=abs(TMP_normJoyDir - TMP_normStimDir)
            action assignment "Calculate distance from center": variable=IO_cursor_distance2center, value=sqrt(pow(IO_cursor_y,2) + pow(IO_cursor_x,2))
          action if "Set arc width": condition=1
            action if "IF IO_cursor_distance2center <= RDP_radius": condition=IO_cursor_distance2center <= RDP_radius
              action assignment "Set to IO_cursor_distance2center": variable=TMP_scalingFactor, value=IO_cursor_distance2center
            action if "IF IO_cursor_distance2center > RDP_radius": condition=IO_cursor_distance2center > RDP_radius
              action assignment "Set to RDP_radius": variable=TMP_scalingFactor, value=RDP_radius
            action assignment "Calculate arc width": variable=CTRL_arc_width, value=180 * (abs(TMP_scalingFactor - RDP_radius)/RDP_radius)
          action if "Set luminance": condition=1
            action assignment "Set arc luminance": variable=CTRL_arc_alpha, value=IO_cursor_distance2center / RDP_radius
            action assignment "Set target luminance": variable=CTRL_target_alpha, value=IO_cursor_distance2center / RDP_radius
          action if "Check if arc triggered": condition=1
            action assignment "Define flag": variable=CTRL_arc_flag, value=(TMP_normJoyDir >= CTRL_arc_trigger_min) && (TMP_normJoyDir <=CTRL_arc_trigger_max)
            action if "IF arc triggered...": condition=CTRL_arc_flag
              action assignment "Make target visible: CTRL_target_col_r": variable=CTRL_target_col_r, value=0
              action assignment "Make target visible: CTRL_target_col_g": variable=CTRL_target_col_g, value=0
              action assignment "Make target visible: CTRL_target_col_b": variable=CTRL_target_col_b, value=0
            action if "IF arc not triggered...": condition=CTRL_arc_flag == false
              action assignment "Make target invisible: CTRL_target_col_r": variable=CTRL_target_col_r, value=0.5
              action assignment "Make target invisible: CTRL_target_col_g": variable=CTRL_target_col_g, value=0.5
              action assignment "Make target invisible: CTRL_target_col_b": variable=CTRL_target_col_b, value=0.5
          action assignment "Update TMP_ExtraCash": variable=TMP_ExtraCash, value=round((IO_cursor_distance2center/RDP_radius)*100)/1000
          action update_stimulus_display "Update Stimulus Display"
          action start_timer "Start HoldDurationTimer": timer=HoldDurationTimer, duration=CTRL_HoldTarget_ms, duration_units=ms
          transition conditional "If outside RDP patch, abort trial": condition=IO_cursor_distance2center > RDP_radius, target=Abort
          transition conditional "If target overlapping with arc go to Hold target": condition=CTRL_arc_flag, target=Hold target
          transition timer_expired "If TargetDurationTimer Expired, Transition to Target presentation": target=Miss, timer=TargetDurationTimer
          transition timer_expired "If FrameTimer Expired, Transition to Update Stimuli": target=Check if target detected, timer=FrameTimer
        task_system_state "Hold target"
          action start_timer "Start FrameTimer": timer=FrameTimer, duration=CTRL_frameTimer_duration, duration_units=ms
          action if "Convert cursor position": condition=1
            action assignment "... X": variable=IO_cursor_x, value=-(CTRL_Xmax * IO_joystickX_calib)
            action assignment "... Y": variable=IO_cursor_y, value=CTRL_Ymax * IO_joystickY_calib
          action if "Update trigger boundaries": condition=1
            action assignment "Update CTRL_arc_trigger_min": variable=CTRL_arc_trigger_min, value=(((TMP_stimDir - (CTRL_arc_width/2) + 360) % 360) + ((180-TMP_stimDir) + 360)) % 360
            action assignment "Update CTRL_arc_trigger_max": variable=CTRL_arc_trigger_max, value=(((TMP_stimDir + (CTRL_arc_width/2) + 360) % 360) + ((180-TMP_stimDir) + 360)) % 360
          action if "Calculate Accurary": condition=1
            action assignment "Assign TMP_RDPdir": variable=TMP_RDPdir, value=RDP_direction
            action if "If TMP_RDPdir between 0:359 ...": condition=TMP_RDPdir >= 0 && TMP_RDPdir < 359
              action assignment "Set TMP_stimDir": variable=TMP_stimDir, value=TMP_RDPdir
            action if "If TMP_RDPdir > 359...": condition=TMP_RDPdir > 359
              action assignment "Correct TMP_RDPdir value to match angle 0:359": variable=TMP_stimDir, value=TMP_RDPdir - 359
            action if "If TMP_RDPdir < 0...": condition=TMP_RDPdir < 0
              action assignment "Correct TMP_RDPdir value to match angle 0:359": variable=TMP_stimDir, value=TMP_RDPdir + 359
            action assignment "Update response accuracy": variable=IO_cursor_accuracy, value=abs(1 - abs(TMP_stimDir - (IO_joystickDirection - 90)) / 180)
            action assignment "Round response accuracy for display": variable=INFO_cursor_accuracyDisplay, value=round(IO_cursor_accuracy * 100) / 100
          action if "Calculate cursor2target distance": condition=1
            action assignment "Normalise joystick direction": variable=TMP_normJoyDir, value=(((IO_joystickDirection-90) + (180-TMP_stimDir) + 360) % 360) 
            action assignment "Normalise RDP direction": variable=TMP_normStimDir, value=(((TMP_stimDir + 360) % 360) + ((180-TMP_stimDir) + 360)) % 360
            action assignment "Difference Joystick - Cursor": variable=TMP_joyDeviation, value=abs(TMP_normJoyDir - TMP_normStimDir)
            action assignment "Calculate distance from center": variable=IO_cursor_distance2center, value=sqrt(pow(IO_cursor_y,2) + pow(IO_cursor_x,2))
          action if "Check if arc triggered": condition=1
            action assignment "Define flag": variable=CTRL_arc_flag, value=(TMP_normJoyDir >= CTRL_arc_trigger_min) && (TMP_normJoyDir <=CTRL_arc_trigger_max)
            action if "IF arc triggered...": condition=CTRL_arc_flag
              action assignment "Make target visible: CTRL_target_col_r": variable=CTRL_target_col_r, value=0
              action assignment "Make target visible: CTRL_target_col_g": variable=CTRL_target_col_g, value=0
              action assignment "Make target visible: CTRL_target_col_b": variable=CTRL_target_col_b, value=0
            action if "IF arc not triggered...": condition=CTRL_arc_flag == false
              action assignment "Make target invisible: CTRL_target_col_r": variable=CTRL_target_col_r, value=0.5
              action assignment "Make target invisible: CTRL_target_col_g": variable=CTRL_target_col_g, value=0.5
              action assignment "Make target invisible: CTRL_target_col_b": variable=CTRL_target_col_b, value=0.5
          action if "Reduce target luminance": condition=1
            action assignment "Set target luminance": variable=CTRL_target_alpha, value=CTRL_target_alpha - (CTRL_target_alpha/100)
            action if "If CTRL_target_alpha < 0": condition=CTRL_target_alpha < 0
              action assignment "Set target luminance to zero": variable=CTRL_target_alpha, value=0
          action update_stimulus_display "Update Stimulus Display"
          transition conditional "If outside RDP patch, abort trial": condition=IO_cursor_distance2center > RDP_radius, target=Abort
          transition conditional "If target overlapping with arc -> Hit": condition=CTRL_arc_flag && timer_expired(HoldDurationTimer), target=Hit
          transition conditional "If target lost -> Check if target detected": condition=CTRL_arc_flag == false, target=Check if target detected
          transition timer_expired "If FrameTimer Expired, Transition to Hold target": target=Hold target, timer=FrameTimer
        task_system_state "Miss"
          action dequeue_stimulus "Dequeue target": stimulus=target
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Set target indicator to 0": variable=CTRL_target_ON, value=0
          action assignment "TRIAL_outcome -> Miss": variable=TRIAL_outcome, value="miss"
          action report "Report trial outcome": message=--- OUTCOME: Miss ---
          transition direct "Always Go to Set up target": target=Set up Target
        task_system_state "Abort"
          action dequeue_stimulus "Dequeue target": stimulus=target
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Set target indicator to 0": variable=CTRL_target_ON, value=0
          action assignment "TRIAL_outcome -> Abort": variable=TRIAL_outcome, value="abort"
          action report "Report trial outcome": message=--- OUTCOME: Abort ---
          transition direct "Always Go to Set up target": target=End Trial
        task_system_state "Hit"
          action play_sound "Play Sound": sound=Reward
          action dequeue_stimulus "Dequeue target": stimulus=target
          action update_stimulus_display "Update Stimulus Display"
          action assignment "Set target indicator to 0": variable=CTRL_target_ON, value=0
          action assignment "TRIAL_outcome -> Hit": variable=TRIAL_outcome, value="hit"
          action assignment "Add to INFO_HitCounter": variable=INFO_HitCounter, value=INFO_HitCounter + 1
          action assignment "Add to INFO_ExtraCash": variable=INFO_ExtraCash, value=INFO_ExtraCash + TMP_ExtraCash
          action report "Report trial outcome": message=--- OUTCOME: Hit ---
          action assignment "Change start_area color to green": variable=CTRL_start_area_col_g, value=1
          action start_timer "Start ColorChangeTimer": timer=ColorChangeTimer, duration=CTRL_start_area_colorChange_ms, duration_units=ms
          transition direct "Always Go to Set up target": target=Set up Target
        task_system_state "End Trial"
          action if "Dequeue Stimuli": condition=1
            action dequeue_stimulus "Dequeue target": stimulus=target
            action dequeue_stimulus "Dequeue RDP": stimulus=RDP
            action dequeue_stimulus "Dequeue start_area": stimulus=start_area
            action dequeue_stimulus "Dequeue arc": stimulus=arc
            action dequeue_stimulus "Dequeue arcMask": stimulus=arcMask
          action assignment "start_area color to black": variable=CTRL_start_area_col_g, value=0
          action update_stimulus_display "Update Stimulus Display"
          action if "Set Matlab variables": condition=1
            action assignment "set ML sync": variable=ML_sync, value=0
            action assignment "set ML trial start": variable=ML_trialEnd, value=ML_trialEnd + 1
          action report "Report trial end": message====== TRIAL $ML_trialEnd ENDS =====
          action start_timer "Start ITI_Timer": timer=ITI_Timer, duration=CTRL_ITI_ms, duration_units=ms
          transition direct "Always Go to ITI": target=ITI
        task_system_state "ITI"
          action start_timer "Start FrameTimer": timer=FrameTimer, duration=CTRL_frameTimer_duration, duration_units=ms
          action if "Convert cursor position": condition=1
            action assignment "... X": variable=IO_cursor_x, value=-(CTRL_Xmax * IO_joystickX_calib)
            action assignment "... Y": variable=IO_cursor_y, value=CTRL_Ymax * IO_joystickY_calib
          transition conditional "If required number of targets collected, end paradigm": condition=INFO_HitCounter >= CTRL_RequiredHitNo && timer_expired(ITI_Timer), target=End paradigm
          transition timer_expired "If ITI_Timer Expired, Transition to ...": target=Wait for Joystick, timer=ITI_Timer
          transition timer_expired "If FrameTimer Expired, Transition to ITI": target=ITI, timer=FrameTimer
        task_system_state "End paradigm"
          action report "Report": message===== $INFO_HitCounter COINS COLLECTED ====
          action report "Report": message===== ENDING PARADIGM ====
          transition yield "Exit Task System..."
